# b:Ts/UseQt                             = "True"
b:Gr/Enable                          = "False"                # CHANGE
i:Ts/SequenceVerbosity                  = 1
b:Ts/ShowCPUTime                        = "True"


# includeFile = inserts.txt

# b:Ts/PauseBeforeQuit                 = "True"
i:Ts/NumberOfThreads                   = -1

sv:Ph/Default/LayeredMassGeometryWorlds = 1 "Inserts"

s:Ge/World/Material                    = "Vacuum"
d:Ge/World/HLX                         = 1. m
d:Ge/World/HLY                         = 1. m
d:Ge/World/HLZ                         = 1. m

s:Gr/ViewA/Type                        = "OpenGL"
d:Gr/ViewA/Theta                       = 45. deg
d:Gr/ViewA/Phi                         = 45. deg
s:Gr/ViewA/CenterOn                    = "MyBox"

u:So/Example/BeamEnergySpread          = 0.001

s:So/Example/BeamEnergySpectrumType       = "Continuous"
s:So/Example/Type                      = "Beam"
s:So/Example/Component                 = "BeamPosition"
s:So/Example/BeamParticle              = "gamma"
s:So/Example/BeamPositionDistribution  = "Flat"
s:So/Example/BeamPositionCutoffShape   = "Rectangle"
dc:So/Example/BeamPositionCutoffX      = 0.07 cm
dc:So/Example/BeamPositionCutoffY      = 0.07 cm
dc:So/Example/BeamPositionSpreadX      = 0.1 cm
dc:So/Example/BeamPositionSpreadY      = 0.1 cm
sc:So/Example/BeamAngularDistribution  = "Flat"
dc:So/Example/BeamAngularCutoffX       = 0.04 rad
dc:So/Example/BeamAngularCutoffY       = 0.160793105 rad # Cheating a bit
i:So/Example/NumberOfHistoriesInRun    = 3000000

d:Ge/BeamPosition/RotX                 = 180. deg
d:Ge/BeamPosition/RotY                 = 0. deg
d:Ge/BeamPosition/RotZ                 = 0. deg
d:Ge/BeamPosition/TransX               = 0 m
d:Ge/BeamPosition/TransY               = 0 m

i:Ts/ShowHistoryCountAtInterval        = 100000


s:Ge/MyBox/Type                        = "TsBox"
s:Ge/MyBox/Material                    = "Air"
s:Ge/MyBox/Parent                      = "World"
dc:Ge/MyBox/HLX                        = .001 m
dc:Ge/MyBox/HLY                        = .2007 m # 0.336 pixel pitch * 1024 # Should be 0.392
dc:Ge/MyBox/HLZ                        = .05376 m # 0.336 pixel pitch * 32
dc:Ge/MyBox/TransX                     = 0. m
dc:Ge/MyBox/TransY                     = 0. m
dc:Ge/MyBox/TransZ                     = -0.52 m
dc:Ge/MyBox/RotX                       = 0. deg
dc:Ge/MyBox/RotY                       = 90. deg
dc:Ge/MyBox/RotZ                       = 0. deg

# s:Sc/Readout_Adipose/Quantity                  = "SurfaceTrackCount"
# s:Sc/Readout_Adipose/Surface                   = "MyBox/XPlusSurface"
# i:Sc/Readout_Adipose/YBins                     = 1024
# i:Sc/Readout_Adipose/ZBins                     = 128 # Just changed this
# i:Sc/Readout_Adipose/EBins                     = 50 # defaults to 1, that is, un-binned
# d:Sc/Readout_Adipose/EBinMin                   = .001 MeV # defaults to zero
# d:Sc/Readout_Adipose/EBinMax                   = 1. MeV # must be specified if EBins is greater than 1
# s:Sc/Readout_Adipose/OutputType                = "csv"
# s:Sc/Readout_Adipose/IfOutputFileAlreadyExists = "overwrite"
# # s:Sc/Readout_Adipose/SplitByTimeFeature        = "beam_energy"
# s:Sc/Readout_Adipose/OutputFile              = "Bone_Scorer"

# s:Sc/Readout_light_primary/OnlyIncludeParticlesOfGeneration = "Primary"
# s:Sc/Readout_light_primary/Quantity                  = "SurfaceTrackCount"
# s:Sc/Readout_light_primary/Surface                   = "MyBox/XPlusSurface"
# i:Sc/Readout_light_primary/YBins                     = 1024
# i:Sc/Readout_light_primary/ZBins                     = 32
# i:Sc/Readout_light_primary/EBins                     = 50 # defaults to 1, that is, un-binned
# d:Sc/Readout_light_primary/EBinMin                   = .001 MeV # defaults to zero
# d:Sc/Readout_light_primary/EBinMax                   = 1. MeV # must be specified if EBins is greater than 1
# s:Sc/Readout_light_primary/OutputType                = "csv"
# s:Sc/Readout_light_primary/SplitByTimeFeature        = "beam_energy"
# s:Sc/Readout_light_primary/IfOutputFileAlreadyExists = "overwrite"

# s:Sc/Readout_light_secondary/OnlyIncludeParticlesOfGeneration = "Secondary"
# s:Sc/Readout_light_secondary/Quantity                  = "SurfaceTrackCount"
# s:Sc/Readout_light_secondary/Surface                   = "MyBox/XPlusSurface"
# i:Sc/Readout_light_secondary/YBins                     = 1024
# i:Sc/Readout_light_secondary/ZBins                     = 32
# i:Sc/Readout_light_secondary/EBins                     = 50 # defaults to 1, that is, un-binned
# d:Sc/Readout_light_secondary/EBinMin                   = .001 MeV # defaults to zero
# d:Sc/Readout_light_secondary/EBinMax                   = 1. MeV # must be specified if EBins is greater than 1
# s:Sc/Readout_light_secondary/OutputType                = "csv"
# s:Sc/Readout_light_secondary/SplitByTimeFeature        = "beam_energy"
# s:Sc/Readout_light_secondary/IfOutputFileAlreadyExists = "overwrite"

s:Ge/ScoringCylinder/Type              = "TsCylinder"
s:Ge/ScoringCylinder/Parent            = "World"
s:Ge/ScoringCylinder/Material          = "G4_WATER"
dc:Ge/ScoringCylinder/RMin             = 0. cm
dc:Ge/ScoringCylinder/RMax             = 8. cm
dc:Ge/ScoringCylinder/HL               = 10 cm
dc:Ge/ScoringCylinder/SPhi             = 0. deg
dc:Ge/ScoringCylinder/DPhi             = 360. deg
dc:Ge/ScoringCylinder/RotX             = 0. deg
dc:Ge/ScoringCylinder/RotY             = 90. deg
dc:Ge/ScoringCylinder/RotZ             = 0. deg
# dc:Ge/ScoringCylinder/TransZ             = -1 cm


# Don't know if this will include the dose to parrallel worlds
s:Sc/Dose_C_2/Quantity                  = "DoseToMedium"
s:Sc/Dose_C_2/Component                 = "ScoringCylinder"
s:Sc/Dose_C_2/IfOutputFileAlreadyExists = "Overwrite"

# W_spectrum_6.txt
# s:So/Example/BeamEnergySpectrumType       = "Continuous"
# dv:So/Example/BeamEnergySpectrumValues = 200 0.015 0.045 0.075 0.105 0.135 0.165 0.195 0.225 0.255 0.285 0.315 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5.985 MeV
# uv:So/Example/BeamEnergySpectrumWeights = 200 2.2262865210080333e-05 7.51092193361817e-05 0.00020166596944515869 0.0009358167568905561 0.001548357963127378 0.0014901719949593573 0.0017952322815272112 0.0027990385706452986 0.00498287323864255 0.007984458284023537 0.010987253645955082 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3.9852698218460666e-05


s:Ge/InsertGroup/Type="Group"
s:Ge/InsertGroup/Parent = "World"
d:Ge/InsertGroup/TransX=0. m
d:Ge/InsertGroup/TransY=0. m
d:Ge/InsertGroup/TransZ=0. m
# d:Ge/InsertGroup/RotX=Tf/beam_energy/Value  deg
# d:Ge/InsertGroup/RotY=0. deg

s:Ge/Insert2/Type     = "TsCylinder"
s:Ge/Insert2/Parent = "InsertGroup"
b:Ge/Insert2/IsParallel = "True"
s:Ge/Insert2/ParallelWorldName = "Inserts"
s:Ge/Insert2/Material = "G4_WATER"
d:Ge/Insert2/RMin = 0.0 cm
d:Ge/Insert2/RMax = 0.1 cm
d:Ge/Insert2/HL = 0.2 cm #3 mm long
d:Ge/Insert2/SPhi = 0. deg
d:Ge/Insert2/DPhi = 360. deg
d:Ge/Insert2/TransX = 0. cm
d:Ge/Insert2/TransY = 0. cm
d:Ge/Insert2/TransZ = 0. cm
d:Ge/Insert2/RotX = 0. deg
d:Ge/Insert2/RotY = 90. deg
d:Ge/Insert2/RotZ = 0. deg

s:Sc/Dose_Insert2/Quantity                  = "DoseToMedium"
s:Sc/Dose_Insert2/Component                 = "Insert2"
s:Sc/Dose_Insert2/IfOutputFileAlreadyExists = "Overwrite"

# C 25
dv:So/Example/BeamEnergySpectrumValues = 200 0.0072475 0.019743 0.032238 0.044733 0.057228 0.069722 0.082217 0.094713 0.10721 0.1197 0.1322 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2.4938 MeV
uv:So/Example/BeamEnergySpectrumWeights = 200 0.00932821724595288 0.10533088988592468 0.09764931536493746 0.07402996773547467 0.056952140479060824 0.04786388624327883 0.03980305983840086 0.03506447993640587 0.029754034163428946 0.026778860596712653 0.024221553651155987 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7.099135567181664e-06
# s:Sc/Dose_Al_6/OutputFile = "Dose_C_spectrum_25topas.txt"
