
# s:Ge/InsertGroup/Type="Group"
# s:Ge/InsertGroup/Parent = "World"
# d:Ge/InsertGroup/TransX=0. m
# d:Ge/InsertGroup/TransY=0. m
# d:Ge/InsertGroup/TransZ=0. m
# # d:Ge/InsertGroup/RotX=0. deg
# d:Ge/InsertGroup/RotY=0. deg

# s:Ge/Insert2/Type     = "TsCylinder"
# s:Ge/Insert2/Parent = "InsertGroup"
# b:Ge/Insert2/IsParallel = "True"
# s:Ge/Insert2/ParallelWorldName = "Inserts"
# s:Ge/Insert2/Material = "G4_LUNG_ICRP"
# d:Ge/Insert2/RMin = 0.0 cm
# d:Ge/Insert2/RMax = 0.75 cm
# d:Ge/Insert2/HL = 10. cm #3 mm long
# d:Ge/Insert2/SPhi = 0. deg
# d:Ge/Insert2/DPhi = 360. deg
# d:Ge/Insert2/TransX = 0. cm
# d:Ge/Insert2/TransY = 4.996000642115686 cm
# d:Ge/Insert2/TransZ = 0.19994395209569293 cm
# d:Ge/Insert2/RotX = 0. deg
# d:Ge/Insert2/RotY = 90. deg
# d:Ge/Insert2/RotZ = 0. deg

# s:Ge/Insert3/Type     = "TsCylinder"
# s:Ge/Insert3/Parent = "InsertGroup"
# b:Ge/Insert3/IsParallel = "True"
# s:Ge/Insert3/ParallelWorldName = "Inserts"
# s:Ge/Insert3/Material = "G4_LUNG_ICRP"
# d:Ge/Insert3/RMin = 0.0 cm
# d:Ge/Insert3/RMax = 0.45 cm
# d:Ge/Insert3/HL = 10. cm #3 mm long
# d:Ge/Insert3/SPhi = 0. deg
# d:Ge/Insert3/DPhi = 360. deg
# d:Ge/Insert3/TransX = 0. cm
# d:Ge/Insert3/TransY = 4.746178447708285 cm
# d:Ge/Insert3/TransZ = -1.5728287073007594 cm
# d:Ge/Insert3/RotX = 0. deg
# d:Ge/Insert3/RotY = 90. deg
# d:Ge/Insert3/RotZ = 0. deg

# s:Ge/Insert4/Type     = "TsCylinder"
# s:Ge/Insert4/Parent = "InsertGroup"
# b:Ge/Insert4/IsParallel = "True"
# s:Ge/Insert4/ParallelWorldName = "Inserts"
# s:Ge/Insert4/Material = "G4_LUNG_ICRP"
# d:Ge/Insert4/RMin = 0.0 cm
# d:Ge/Insert4/RMax = 0.4 cm
# d:Ge/Insert4/HL = 10. cm #3 mm long
# d:Ge/Insert4/SPhi = 0. deg
# d:Ge/Insert4/DPhi = 360. deg
# d:Ge/Insert4/TransX = 0. cm
# d:Ge/Insert4/TransY = 4.010478731488857 cm
# d:Ge/Insert4/TransZ = -2.9859772846214905 cm
# d:Ge/Insert4/RotX = 0. deg
# d:Ge/Insert4/RotY = 90. deg
# d:Ge/Insert4/RotZ = 0. deg

# s:Ge/Insert5/Type     = "TsCylinder"
# s:Ge/Insert5/Parent = "InsertGroup"
# b:Ge/Insert5/IsParallel = "True"
# s:Ge/Insert5/ParallelWorldName = "Inserts"
# s:Ge/Insert5/Material = "G4_LUNG_ICRP"
# d:Ge/Insert5/RMin = 0.0 cm
# d:Ge/Insert5/RMax = 0.35 cm
# d:Ge/Insert5/HL = 10. cm #3 mm long
# d:Ge/Insert5/SPhi = 0. deg
# d:Ge/Insert5/DPhi = 360. deg
# d:Ge/Insert5/TransX = 0. cm
# d:Ge/Insert5/TransY = 3.0291019740716836 cm
# d:Ge/Insert5/TransZ = -3.978007193391564 cm
# d:Ge/Insert5/RotX = 0. deg
# d:Ge/Insert5/RotY = 90. deg
# d:Ge/Insert5/RotZ = 0. deg

# s:Ge/Insert6/Type     = "TsCylinder"
# s:Ge/Insert6/Parent = "InsertGroup"
# b:Ge/Insert6/IsParallel = "True"
# s:Ge/Insert6/ParallelWorldName = "Inserts"
# s:Ge/Insert6/Material = "G4_LUNG_ICRP"
# d:Ge/Insert6/RMin = 0.0 cm
# d:Ge/Insert6/RMax = 0.3 cm
# d:Ge/Insert6/HL = 10. cm #3 mm long
# d:Ge/Insert6/SPhi = 0. deg
# d:Ge/Insert6/DPhi = 360. deg
# d:Ge/Insert6/TransX = 0. cm
# d:Ge/Insert6/TransY = 1.9966979858715082 cm
# d:Ge/Insert6/TransZ = -4.58401539626741 cm
# d:Ge/Insert6/RotX = 0. deg
# d:Ge/Insert6/RotY = 90. deg
# d:Ge/Insert6/RotZ = 0. deg

# s:Ge/Insert7/Type     = "TsCylinder"
# s:Ge/Insert7/Parent = "InsertGroup"
# b:Ge/Insert7/IsParallel = "True"
# s:Ge/Insert7/ParallelWorldName = "Inserts"
# s:Ge/Insert7/Material = "G4_LUNG_ICRP"
# d:Ge/Insert7/RMin = 0.0 cm
# d:Ge/Insert7/RMax = 0.25 cm
# d:Ge/Insert7/HL = 10. cm #3 mm long
# d:Ge/Insert7/SPhi = 0. deg
# d:Ge/Insert7/DPhi = 360. deg
# d:Ge/Insert7/TransX = 0. cm
# d:Ge/Insert7/TransY = 1.0461899278239009 cm
# d:Ge/Insert7/TransZ = -4.889323740040111 cm
# d:Ge/Insert7/RotX = 0. deg
# d:Ge/Insert7/RotY = 90. deg
# d:Ge/Insert7/RotZ = 0. deg

# s:Ge/Insert8/Type     = "TsCylinder"
# s:Ge/Insert8/Parent = "InsertGroup"
# b:Ge/Insert8/IsParallel = "True"
# s:Ge/Insert8/ParallelWorldName = "Inserts"
# s:Ge/Insert8/Material = "G4_LUNG_ICRP"
# d:Ge/Insert8/RMin = 0.0 cm
# d:Ge/Insert8/RMax = 0.2 cm
# d:Ge/Insert8/HL = 10. cm #3 mm long
# d:Ge/Insert8/SPhi = 0. deg
# d:Ge/Insert8/DPhi = 360. deg
# d:Ge/Insert8/TransX = 0. cm
# d:Ge/Insert8/TransY = 0.25387110514781086 cm
# d:Ge/Insert8/TransZ = -4.993550786962222 cm
# d:Ge/Insert8/RotX = 0. deg
# d:Ge/Insert8/RotY = 90. deg
# d:Ge/Insert8/RotZ = 0. deg

# s:Ge/Insert9/Type     = "TsCylinder"
# s:Ge/Insert9/Parent = "InsertGroup"
# b:Ge/Insert9/IsParallel = "True"
# s:Ge/Insert9/ParallelWorldName = "Inserts"
# s:Ge/Insert9/Material = "G4_LUNG_ICRP"
# d:Ge/Insert9/RMin = 0.0 cm
# d:Ge/Insert9/RMax = 0.15 cm
# d:Ge/Insert9/HL = 10. cm #3 mm long
# d:Ge/Insert9/SPhi = 0. deg
# d:Ge/Insert9/DPhi = 360. deg
# d:Ge/Insert9/TransX = 0. cm
# d:Ge/Insert9/TransY = -0.34574412358734263 cm
# d:Ge/Insert9/TransZ = -4.988031776262539 cm
# d:Ge/Insert9/RotX = 0. deg
# d:Ge/Insert9/RotY = 90. deg
# d:Ge/Insert9/RotZ = 0. deg

# s:Ge/Insert10/Type     = "TsCylinder"
# s:Ge/Insert10/Parent = "InsertGroup"
# b:Ge/Insert10/IsParallel = "True"
# s:Ge/Insert10/ParallelWorldName = "Inserts"
# s:Ge/Insert10/Material = "G4_LUNG_ICRP"
# d:Ge/Insert10/RMin = 0.0 cm
# d:Ge/Insert10/RMax = 0.1 cm
# d:Ge/Insert10/HL = 10. cm #3 mm long
# d:Ge/Insert10/SPhi = 0. deg
# d:Ge/Insert10/DPhi = 360. deg
# d:Ge/Insert10/TransX = 0. cm
# d:Ge/Insert10/TransY = -0.7432499836786259 cm
# d:Ge/Insert10/TransZ = -4.9444493588024265 cm
# d:Ge/Insert10/RotX = 0. deg
# d:Ge/Insert10/RotY = 90. deg
# d:Ge/Insert10/RotZ = 0. deg

# s:Ge/Insert12/Type     = "TsCylinder"
# s:Ge/Insert12/Parent = "InsertGroup"
# b:Ge/Insert12/IsParallel = "True"
# s:Ge/Insert12/ParallelWorldName = "Inserts"
# s:Ge/Insert12/Material = "G4_BONE_COMPACT_ICRU"
# d:Ge/Insert12/RMin = 0.0 cm
# d:Ge/Insert12/RMax = 0.75 cm
# d:Ge/Insert12/HL = 10. cm #3 mm long
# d:Ge/Insert12/SPhi = 0. deg
# d:Ge/Insert12/DPhi = 360. deg
# d:Ge/Insert12/TransX = 0. cm
# d:Ge/Insert12/TransY = -2.3248437792099135 cm
# d:Ge/Insert12/TransZ = -4.4266354494434 cm
# d:Ge/Insert12/RotX = 0. deg
# d:Ge/Insert12/RotY = 90. deg
# d:Ge/Insert12/RotZ = 0. deg

# s:Ge/Insert13/Type     = "TsCylinder"
# s:Ge/Insert13/Parent = "InsertGroup"
# b:Ge/Insert13/IsParallel = "True"
# s:Ge/Insert13/ParallelWorldName = "Inserts"
# s:Ge/Insert13/Material = "G4_BONE_COMPACT_ICRU"
# d:Ge/Insert13/RMin = 0.0 cm
# d:Ge/Insert13/RMax = 0.45 cm
# d:Ge/Insert13/HL = 10. cm #3 mm long
# d:Ge/Insert13/SPhi = 0. deg
# d:Ge/Insert13/DPhi = 360. deg
# d:Ge/Insert13/TransX = 0. cm
# d:Ge/Insert13/TransY = -3.7351988401780383 cm
# d:Ge/Insert13/TransZ = -3.3238967529591883 cm
# d:Ge/Insert13/RotX = 0. deg
# d:Ge/Insert13/RotY = 90. deg
# d:Ge/Insert13/RotZ = 0. deg

# s:Ge/Insert14/Type     = "TsCylinder"
# s:Ge/Insert14/Parent = "InsertGroup"
# b:Ge/Insert14/IsParallel = "True"
# s:Ge/Insert14/ParallelWorldName = "Inserts"
# s:Ge/Insert14/Material = "G4_BONE_COMPACT_ICRU"
# d:Ge/Insert14/RMin = 0.0 cm
# d:Ge/Insert14/RMax = 0.4 cm
# d:Ge/Insert14/HL = 10. cm #3 mm long
# d:Ge/Insert14/SPhi = 0. deg
# d:Ge/Insert14/DPhi = 360. deg
# d:Ge/Insert14/TransX = 0. cm
# d:Ge/Insert14/TransY = -4.591171549349915 cm
# d:Ge/Insert14/TransZ = -1.9801878204957988 cm
# d:Ge/Insert14/RotX = 0. deg
# d:Ge/Insert14/RotY = 90. deg
# d:Ge/Insert14/RotZ = 0. deg

# s:Ge/Insert15/Type     = "TsCylinder"
# s:Ge/Insert15/Parent = "InsertGroup"
# b:Ge/Insert15/IsParallel = "True"
# s:Ge/Insert15/ParallelWorldName = "Inserts"
# s:Ge/Insert15/Material = "G4_BONE_COMPACT_ICRU"
# d:Ge/Insert15/RMin = 0.0 cm
# d:Ge/Insert15/RMax = 0.35 cm
# d:Ge/Insert15/HL = 10. cm #3 mm long
# d:Ge/Insert15/SPhi = 0. deg
# d:Ge/Insert15/DPhi = 360. deg
# d:Ge/Insert15/TransX = 0. cm
# d:Ge/Insert15/TransY = -4.959606272950172 cm
# d:Ge/Insert15/TransZ = -0.6342756635038914 cm
# d:Ge/Insert15/RotX = 0. deg
# d:Ge/Insert15/RotY = 90. deg
# d:Ge/Insert15/RotZ = 0. deg

# s:Ge/Insert16/Type     = "TsCylinder"
# s:Ge/Insert16/Parent = "InsertGroup"
# b:Ge/Insert16/IsParallel = "True"
# s:Ge/Insert16/ParallelWorldName = "Inserts"
# s:Ge/Insert16/Material = "G4_BONE_COMPACT_ICRU"
# d:Ge/Insert16/RMin = 0.0 cm
# d:Ge/Insert16/RMax = 0.3 cm
# d:Ge/Insert16/HL = 10. cm #3 mm long
# d:Ge/Insert16/SPhi = 0. deg
# d:Ge/Insert16/DPhi = 360. deg
# d:Ge/Insert16/TransX = 0. cm
# d:Ge/Insert16/TransY = -4.968222777442322 cm
# d:Ge/Insert16/TransZ = 0.5628165186837536 cm
# d:Ge/Insert16/RotX = 0. deg
# d:Ge/Insert16/RotY = 90. deg
# d:Ge/Insert16/RotZ = 0. deg

# s:Ge/Insert17/Type     = "TsCylinder"
# s:Ge/Insert17/Parent = "InsertGroup"
# b:Ge/Insert17/IsParallel = "True"
# s:Ge/Insert17/ParallelWorldName = "Inserts"
# s:Ge/Insert17/Material = "G4_BONE_COMPACT_ICRU"
# d:Ge/Insert17/RMin = 0.0 cm
# d:Ge/Insert17/RMax = 0.25 cm
# d:Ge/Insert17/HL = 10. cm #3 mm long
# d:Ge/Insert17/SPhi = 0. deg
# d:Ge/Insert17/DPhi = 360. deg
# d:Ge/Insert17/TransX = 0. cm
# d:Ge/Insert17/TransY = -4.75737353011303 cm
# d:Ge/Insert17/TransZ = 1.538634815341148 cm
# d:Ge/Insert17/RotX = 0. deg
# d:Ge/Insert17/RotY = 90. deg
# d:Ge/Insert17/RotZ = 0. deg

# s:Ge/Insert18/Type     = "TsCylinder"
# s:Ge/Insert18/Parent = "InsertGroup"
# b:Ge/Insert18/IsParallel = "True"
# s:Ge/Insert18/ParallelWorldName = "Inserts"
# s:Ge/Insert18/Material = "G4_BONE_COMPACT_ICRU"
# d:Ge/Insert18/RMin = 0.0 cm
# d:Ge/Insert18/RMax = 0.2 cm
# d:Ge/Insert18/HL = 10. cm #3 mm long
# d:Ge/Insert18/SPhi = 0. deg
# d:Ge/Insert18/DPhi = 360. deg
# d:Ge/Insert18/TransX = 0. cm
# d:Ge/Insert18/TransY = -4.451477389170967 cm
# d:Ge/Insert18/TransZ = 2.2769165671362734 cm
# d:Ge/Insert18/RotX = 0. deg
# d:Ge/Insert18/RotY = 90. deg
# d:Ge/Insert18/RotZ = 0. deg

# s:Ge/Insert19/Type     = "TsCylinder"
# s:Ge/Insert19/Parent = "InsertGroup"
# b:Ge/Insert19/IsParallel = "True"
# s:Ge/Insert19/ParallelWorldName = "Inserts"
# s:Ge/Insert19/Material = "G4_BONE_COMPACT_ICRU"
# d:Ge/Insert19/RMin = 0.0 cm
# d:Ge/Insert19/RMax = 0.15 cm
# d:Ge/Insert19/HL = 10. cm #3 mm long
# d:Ge/Insert19/SPhi = 0. deg
# d:Ge/Insert19/DPhi = 360. deg
# d:Ge/Insert19/TransX = 0. cm
# d:Ge/Insert19/TransY = -4.146890171333705 cm
# d:Ge/Insert19/TransZ = 2.793439082367094 cm
# d:Ge/Insert19/RotX = 0. deg
# d:Ge/Insert19/RotY = 90. deg
# d:Ge/Insert19/RotZ = 0. deg

# s:Ge/Insert20/Type     = "TsCylinder"
# s:Ge/Insert20/Parent = "InsertGroup"
# b:Ge/Insert20/IsParallel = "True"
# s:Ge/Insert20/ParallelWorldName = "Inserts"
# s:Ge/Insert20/Material = "G4_BONE_COMPACT_ICRU"
# d:Ge/Insert20/RMin = 0.0 cm
# d:Ge/Insert20/RMax = 0.1 cm
# d:Ge/Insert20/HL = 10. cm #3 mm long
# d:Ge/Insert20/SPhi = 0. deg
# d:Ge/Insert20/DPhi = 360. deg
# d:Ge/Insert20/TransX = 0. cm
# d:Ge/Insert20/TransY = -3.9103937606092676 cm
# d:Ge/Insert20/TransZ = 3.1158980466292716 cm
# d:Ge/Insert20/RotX = 0. deg
# d:Ge/Insert20/RotY = 90. deg
# d:Ge/Insert20/RotZ = 0. deg

# s:Ge/Insert22/Type     = "TsCylinder"
# s:Ge/Insert22/Parent = "InsertGroup"
# b:Ge/Insert22/IsParallel = "True"
# s:Ge/Insert22/ParallelWorldName = "Inserts"
# s:Ge/Insert22/Material = "G4_BONE_CORTICAL_ICRP"
# d:Ge/Insert22/RMin = 0.0 cm
# d:Ge/Insert22/RMax = 0.75 cm
# d:Ge/Insert22/HL = 10. cm #3 mm long
# d:Ge/Insert22/SPhi = 0. deg
# d:Ge/Insert22/DPhi = 360. deg
# d:Ge/Insert22/TransX = 0. cm
# d:Ge/Insert22/TransY = -2.6711568629057743 cm
# d:Ge/Insert22/TransZ = 4.226691497347705 cm
# d:Ge/Insert22/RotX = 0. deg
# d:Ge/Insert22/RotY = 90. deg
# d:Ge/Insert22/RotZ = 0. deg

# s:Ge/Insert23/Type     = "TsCylinder"
# s:Ge/Insert23/Parent = "InsertGroup"
# b:Ge/Insert23/IsParallel = "True"
# s:Ge/Insert23/ParallelWorldName = "Inserts"
# s:Ge/Insert23/Material = "G4_BONE_CORTICAL_ICRP"
# d:Ge/Insert23/RMin = 0.0 cm
# d:Ge/Insert23/RMax = 0.45 cm
# d:Ge/Insert23/HL = 10. cm #3 mm long
# d:Ge/Insert23/SPhi = 0. deg
# d:Ge/Insert23/DPhi = 360. deg
# d:Ge/Insert23/TransX = 0. cm
# d:Ge/Insert23/TransY = -1.0109796075302477 cm
# d:Ge/Insert23/TransZ = 4.896725460259947 cm
# d:Ge/Insert23/RotX = 0. deg
# d:Ge/Insert23/RotY = 90. deg
# d:Ge/Insert23/RotZ = 0. deg

# s:Ge/Insert24/Type     = "TsCylinder"
# s:Ge/Insert24/Parent = "InsertGroup"
# b:Ge/Insert24/IsParallel = "True"
# s:Ge/Insert24/ParallelWorldName = "Inserts"
# s:Ge/Insert24/Material = "G4_BONE_CORTICAL_ICRP"
# d:Ge/Insert24/RMin = 0.0 cm
# d:Ge/Insert24/RMax = 0.4 cm
# d:Ge/Insert24/HL = 10. cm #3 mm long
# d:Ge/Insert24/SPhi = 0. deg
# d:Ge/Insert24/DPhi = 360. deg
# d:Ge/Insert24/TransX = 0. cm
# d:Ge/Insert24/TransY = 0.580692817861057 cm
# d:Ge/Insert24/TransZ = 4.966165105117286 cm
# d:Ge/Insert24/RotX = 0. deg
# d:Ge/Insert24/RotY = 90. deg
# d:Ge/Insert24/RotZ = 0. deg

# s:Ge/Insert25/Type     = "TsCylinder"
# s:Ge/Insert25/Parent = "InsertGroup"
# b:Ge/Insert25/IsParallel = "True"
# s:Ge/Insert25/ParallelWorldName = "Inserts"
# s:Ge/Insert25/Material = "G4_BONE_CORTICAL_ICRP"
# d:Ge/Insert25/RMin = 0.0 cm
# d:Ge/Insert25/RMax = 0.35 cm
# d:Ge/Insert25/HL = 10. cm #3 mm long
# d:Ge/Insert25/SPhi = 0. deg
# d:Ge/Insert25/DPhi = 360. deg
# d:Ge/Insert25/TransX = 0. cm
# d:Ge/Insert25/TransY = 1.9305042988784868 cm
# d:Ge/Insert25/TransZ = 4.612282856895453 cm
# d:Ge/Insert25/RotX = 0. deg
# d:Ge/Insert25/RotY = 90. deg
# d:Ge/Insert25/RotZ = 0. deg

# s:Ge/Insert26/Type     = "TsCylinder"
# s:Ge/Insert26/Parent = "InsertGroup"
# b:Ge/Insert26/IsParallel = "True"
# s:Ge/Insert26/ParallelWorldName = "Inserts"
# s:Ge/Insert26/Material = "G4_BONE_CORTICAL_ICRP"
# d:Ge/Insert26/RMin = 0.0 cm
# d:Ge/Insert26/RMax = 0.3 cm
# d:Ge/Insert26/HL = 10. cm #3 mm long
# d:Ge/Insert26/SPhi = 0. deg
# d:Ge/Insert26/DPhi = 360. deg
# d:Ge/Insert26/TransX = 0. cm
# d:Ge/Insert26/TransY = 2.9715247915708116 cm
# d:Ge/Insert26/TransZ = 4.021198877583655 cm
# d:Ge/Insert26/RotX = 0. deg
# d:Ge/Insert26/RotY = 90. deg
# d:Ge/Insert26/RotZ = 0. deg

# s:Ge/Insert27/Type     = "TsCylinder"
# s:Ge/Insert27/Parent = "InsertGroup"
# b:Ge/Insert27/IsParallel = "True"
# s:Ge/Insert27/ParallelWorldName = "Inserts"
# s:Ge/Insert27/Material = "G4_BONE_CORTICAL_ICRP"
# d:Ge/Insert27/RMin = 0.0 cm
# d:Ge/Insert27/RMax = 0.25 cm
# d:Ge/Insert27/HL = 10. cm #3 mm long
# d:Ge/Insert27/SPhi = 0. deg
# d:Ge/Insert27/DPhi = 360. deg
# d:Ge/Insert27/TransX = 0. cm
# d:Ge/Insert27/TransY = 3.711183602289129 cm
# d:Ge/Insert27/TransZ = 3.3506889246989626 cm
# d:Ge/Insert27/RotX = 0. deg
# d:Ge/Insert27/RotY = 90. deg
# d:Ge/Insert27/RotZ = 0. deg

# s:Ge/Insert28/Type     = "TsCylinder"
# s:Ge/Insert28/Parent = "InsertGroup"
# b:Ge/Insert28/IsParallel = "True"
# s:Ge/Insert28/ParallelWorldName = "Inserts"
# s:Ge/Insert28/Material = "G4_BONE_CORTICAL_ICRP"
# d:Ge/Insert28/RMin = 0.0 cm
# d:Ge/Insert28/RMax = 0.2 cm
# d:Ge/Insert28/HL = 10. cm #3 mm long
# d:Ge/Insert28/SPhi = 0. deg
# d:Ge/Insert28/DPhi = 360. deg
# d:Ge/Insert28/TransX = 0. cm
# d:Ge/Insert28/TransY = 4.197606284023153 cm
# d:Ge/Insert28/TransZ = 2.7166342198259477 cm
# d:Ge/Insert28/RotX = 0. deg
# d:Ge/Insert28/RotY = 90. deg
# d:Ge/Insert28/RotZ = 0. deg

# s:Ge/Insert29/Type     = "TsCylinder"
# s:Ge/Insert29/Parent = "InsertGroup"
# b:Ge/Insert29/IsParallel = "True"
# s:Ge/Insert29/ParallelWorldName = "Inserts"
# s:Ge/Insert29/Material = "G4_BONE_CORTICAL_ICRP"
# d:Ge/Insert29/RMin = 0.0 cm
# d:Ge/Insert29/RMax = 0.15 cm
# d:Ge/Insert29/HL = 10. cm #3 mm long
# d:Ge/Insert29/SPhi = 0. deg
# d:Ge/Insert29/DPhi = 360. deg
# d:Ge/Insert29/TransX = 0. cm
# d:Ge/Insert29/TransY = 4.492634294921047 cm
# d:Ge/Insert29/TransZ = 2.1945926938954443 cm
# d:Ge/Insert29/RotX = 0. deg
# d:Ge/Insert29/RotY = 90. deg
# d:Ge/Insert29/RotZ = 0. deg

# s:Ge/Insert30/Type     = "TsCylinder"
# s:Ge/Insert30/Parent = "InsertGroup"
# b:Ge/Insert30/IsParallel = "True"
# s:Ge/Insert30/ParallelWorldName = "Inserts"
# s:Ge/Insert30/Material = "G4_BONE_CORTICAL_ICRP"
# d:Ge/Insert30/RMin = 0.0 cm
# d:Ge/Insert30/RMax = 0.1 cm
# d:Ge/Insert30/HL = 10. cm #3 mm long
# d:Ge/Insert30/SPhi = 0. deg
# d:Ge/Insert30/DPhi = 360. deg
# d:Ge/Insert30/TransX = 0. cm
# d:Ge/Insert30/TransY = 4.653643744287892 cm
# d:Ge/Insert30/TransZ = 1.8285513121731536 cm
# d:Ge/Insert30/RotX = 0. deg
# d:Ge/Insert30/RotY = 90. deg
# d:Ge/Insert30/RotZ = 0. deg

# s:Ge/Insert32/Type     = "TsCylinder"
# s:Ge/Insert32/Parent = "InsertGroup"
# b:Ge/Insert32/IsParallel = "True"
# s:Ge/Insert32/ParallelWorldName = "Inserts"
# s:Ge/Insert32/Material = "G4_ADIPOSE_TISSUE_ICRP"
# d:Ge/Insert32/RMin = 0.0 cm
# d:Ge/Insert32/RMax = 0.45 cm
# d:Ge/Insert32/HL = 10. cm #3 mm long
# d:Ge/Insert32/SPhi = 0. deg
# d:Ge/Insert32/DPhi = 360. deg
# d:Ge/Insert32/TransX = 0. cm
# d:Ge/Insert32/TransY = 2.3397417613797677 cm
# d:Ge/Insert32/TransZ = -0.8806863744009564 cm
# d:Ge/Insert32/RotX = 0. deg
# d:Ge/Insert32/RotY = 90. deg
# d:Ge/Insert32/RotZ = 0. deg

# s:Ge/Insert33/Type     = "TsCylinder"
# s:Ge/Insert33/Parent = "InsertGroup"
# b:Ge/Insert33/IsParallel = "True"
# s:Ge/Insert33/ParallelWorldName = "Inserts"
# s:Ge/Insert33/Material = "G4_ADIPOSE_TISSUE_ICRP"
# d:Ge/Insert33/RMin = 0.0 cm
# d:Ge/Insert33/RMax = 0.35 cm
# d:Ge/Insert33/HL = 10. cm #3 mm long
# d:Ge/Insert33/SPhi = 0. deg
# d:Ge/Insert33/DPhi = 360. deg
# d:Ge/Insert33/TransX = 0. cm
# d:Ge/Insert33/TransY = 1.5145509870358418 cm
# d:Ge/Insert33/TransZ = -1.989003596695782 cm
# d:Ge/Insert33/RotX = 0. deg
# d:Ge/Insert33/RotY = 90. deg
# d:Ge/Insert33/RotZ = 0. deg

# s:Ge/Insert34/Type     = "TsCylinder"
# s:Ge/Insert34/Parent = "InsertGroup"
# b:Ge/Insert34/IsParallel = "True"
# s:Ge/Insert34/ParallelWorldName = "Inserts"
# s:Ge/Insert34/Material = "G4_ADIPOSE_TISSUE_ICRP"
# d:Ge/Insert34/RMin = 0.0 cm
# d:Ge/Insert34/RMax = 0.25 cm
# d:Ge/Insert34/HL = 10. cm #3 mm long
# d:Ge/Insert34/SPhi = 0. deg
# d:Ge/Insert34/DPhi = 360. deg
# d:Ge/Insert34/TransX = 0. cm
# d:Ge/Insert34/TransY = 0.6204398531016085 cm
# d:Ge/Insert34/TransZ = -2.421787436725869 cm
# d:Ge/Insert34/RotX = 0. deg
# d:Ge/Insert34/RotY = 90. deg
# d:Ge/Insert34/RotZ = 0. deg

# s:Ge/Insert35/Type     = "TsCylinder"
# s:Ge/Insert35/Parent = "InsertGroup"
# b:Ge/Insert35/IsParallel = "True"
# s:Ge/Insert35/ParallelWorldName = "Inserts"
# s:Ge/Insert35/Material = "G4_ADIPOSE_TISSUE_ICRP"
# d:Ge/Insert35/RMin = 0.0 cm
# d:Ge/Insert35/RMax = 0.15 cm
# d:Ge/Insert35/HL = 10. cm #3 mm long
# d:Ge/Insert35/SPhi = 0. deg
# d:Ge/Insert35/DPhi = 360. deg
# d:Ge/Insert35/TransX = 0. cm
# d:Ge/Insert35/TransY = 0.02699099249972772 cm
# d:Ge/Insert35/TransZ = -2.499854293018671 cm
# d:Ge/Insert35/RotX = 0. deg
# d:Ge/Insert35/RotY = 90. deg
# d:Ge/Insert35/RotZ = 0. deg

# s:Ge/Insert37/Type     = "TsCylinder"
# s:Ge/Insert37/Parent = "InsertGroup"
# b:Ge/Insert37/IsParallel = "True"
# s:Ge/Insert37/ParallelWorldName = "Inserts"
# s:Ge/Insert37/Material = "G4_BRAIN_ICRP"
# d:Ge/Insert37/RMin = 0.0 cm
# d:Ge/Insert37/RMax = 0.45 cm
# d:Ge/Insert37/HL = 10. cm #3 mm long
# d:Ge/Insert37/SPhi = 0. deg
# d:Ge/Insert37/DPhi = 360. deg
# d:Ge/Insert37/TransX = 0. cm
# d:Ge/Insert37/TransY = -1.9325676536879244 cm
# d:Ge/Insert37/TransZ = -1.5859326164497503 cm
# d:Ge/Insert37/RotX = 0. deg
# d:Ge/Insert37/RotY = 90. deg
# d:Ge/Insert37/RotZ = 0. deg

# s:Ge/Insert38/Type     = "TsCylinder"
# s:Ge/Insert38/Parent = "InsertGroup"
# b:Ge/Insert38/IsParallel = "True"
# s:Ge/Insert38/ParallelWorldName = "Inserts"
# s:Ge/Insert38/Material = "G4_BRAIN_ICRP"
# d:Ge/Insert38/RMin = 0.0 cm
# d:Ge/Insert38/RMax = 0.35 cm
# d:Ge/Insert38/HL = 10. cm #3 mm long
# d:Ge/Insert38/SPhi = 0. deg
# d:Ge/Insert38/DPhi = 360. deg
# d:Ge/Insert38/TransX = 0. cm
# d:Ge/Insert38/TransY = -2.479803136475086 cm
# d:Ge/Insert38/TransZ = -0.3171378317519457 cm
# d:Ge/Insert38/RotX = 0. deg
# d:Ge/Insert38/RotY = 90. deg
# d:Ge/Insert38/RotZ = 0. deg

# s:Ge/Insert39/Type     = "TsCylinder"
# s:Ge/Insert39/Parent = "InsertGroup"
# b:Ge/Insert39/IsParallel = "True"
# s:Ge/Insert39/ParallelWorldName = "Inserts"
# s:Ge/Insert39/Material = "G4_BRAIN_ICRP"
# d:Ge/Insert39/RMin = 0.0 cm
# d:Ge/Insert39/RMax = 0.25 cm
# d:Ge/Insert39/HL = 10. cm #3 mm long
# d:Ge/Insert39/SPhi = 0. deg
# d:Ge/Insert39/DPhi = 360. deg
# d:Ge/Insert39/TransX = 0. cm
# d:Ge/Insert39/TransY = -2.407549369321406 cm
# d:Ge/Insert39/TransZ = 0.6735770440566556 cm
# d:Ge/Insert39/RotX = 0. deg
# d:Ge/Insert39/RotY = 90. deg
# d:Ge/Insert39/RotZ = 0. deg

# s:Ge/Insert40/Type     = "TsCylinder"
# s:Ge/Insert40/Parent = "InsertGroup"
# b:Ge/Insert40/IsParallel = "True"
# s:Ge/Insert40/ParallelWorldName = "Inserts"
# s:Ge/Insert40/Material = "G4_BRAIN_ICRP"
# d:Ge/Insert40/RMin = 0.0 cm
# d:Ge/Insert40/RMax = 0.15 cm
# d:Ge/Insert40/HL = 10. cm #3 mm long
# d:Ge/Insert40/SPhi = 0. deg
# d:Ge/Insert40/DPhi = 360. deg
# d:Ge/Insert40/TransX = 0. cm
# d:Ge/Insert40/TransY = -2.1784328197636205 cm
# d:Ge/Insert40/TransZ = 1.2265522613312165 cm
# d:Ge/Insert40/RotX = 0. deg
# d:Ge/Insert40/RotY = 90. deg
# d:Ge/Insert40/RotZ = 0. deg

# s:Ge/Insert42/Type     = "TsCylinder"
# s:Ge/Insert42/Parent = "InsertGroup"
# b:Ge/Insert42/IsParallel = "True"
# s:Ge/Insert42/ParallelWorldName = "Inserts"
# s:Ge/Insert42/Material = "G4_B-100_BONE"
# d:Ge/Insert42/RMin = 0.0 cm
# d:Ge/Insert42/RMax = 0.45 cm
# d:Ge/Insert42/HL = 10. cm #3 mm long
# d:Ge/Insert42/SPhi = 0. deg
# d:Ge/Insert42/DPhi = 360. deg
# d:Ge/Insert42/TransX = 0. cm
# d:Ge/Insert42/TransY = -0.4071741076918434 cm
# d:Ge/Insert42/TransZ = 2.466618990850705 cm
# d:Ge/Insert42/RotX = 0. deg
# d:Ge/Insert42/RotY = 90. deg
# d:Ge/Insert42/RotZ = 0. deg

# s:Ge/Insert43/Type     = "TsCylinder"
# s:Ge/Insert43/Parent = "InsertGroup"
# b:Ge/Insert43/IsParallel = "True"
# s:Ge/Insert43/ParallelWorldName = "Inserts"
# s:Ge/Insert43/Material = "G4_B-100_BONE"
# d:Ge/Insert43/RMin = 0.0 cm
# d:Ge/Insert43/RMax = 0.35 cm
# d:Ge/Insert43/HL = 10. cm #3 mm long
# d:Ge/Insert43/SPhi = 0. deg
# d:Ge/Insert43/DPhi = 360. deg
# d:Ge/Insert43/TransX = 0. cm
# d:Ge/Insert43/TransY = 0.9652521494392434 cm
# d:Ge/Insert43/TransZ = 2.3061414284477264 cm
# d:Ge/Insert43/RotX = 0. deg
# d:Ge/Insert43/RotY = 90. deg
# d:Ge/Insert43/RotZ = 0. deg

# s:Ge/Insert44/Type     = "TsCylinder"
# s:Ge/Insert44/Parent = "InsertGroup"
# b:Ge/Insert44/IsParallel = "True"
# s:Ge/Insert44/ParallelWorldName = "Inserts"
# s:Ge/Insert44/Material = "G4_B-100_BONE"
# d:Ge/Insert44/RMin = 0.0 cm
# d:Ge/Insert44/RMax = 0.25 cm
# d:Ge/Insert44/HL = 10. cm #3 mm long
# d:Ge/Insert44/SPhi = 0. deg
# d:Ge/Insert44/DPhi = 360. deg
# d:Ge/Insert44/TransX = 0. cm
# d:Ge/Insert44/TransY = 1.787109516219797 cm
# d:Ge/Insert44/TransZ = 1.7482103926692127 cm
# d:Ge/Insert44/RotX = 0. deg
# d:Ge/Insert44/RotY = 90. deg
# d:Ge/Insert44/RotZ = 0. deg

# s:Ge/Insert45/Type     = "TsCylinder"
# s:Ge/Insert45/Parent = "InsertGroup"
# b:Ge/Insert45/IsParallel = "True"
# s:Ge/Insert45/ParallelWorldName = "Inserts"
# s:Ge/Insert45/Material = "G4_B-100_BONE"
# d:Ge/Insert45/RMin = 0.0 cm
# d:Ge/Insert45/RMax = 0.15 cm
# d:Ge/Insert45/HL = 10. cm #3 mm long
# d:Ge/Insert45/SPhi = 0. deg
# d:Ge/Insert45/DPhi = 360. deg
# d:Ge/Insert45/TransX = 0. cm
# d:Ge/Insert45/TransY = 2.151441827263892 cm
# d:Ge/Insert45/TransZ = 1.273302031687456 cm
# d:Ge/Insert45/RotX = 0. deg
# d:Ge/Insert45/RotY = 90. deg
# d:Ge/Insert45/RotZ = 0. deg

s:Sc/Readout_Adipose/OutputFile = "Readout_1"
# d:Ge/InsertGroup/RotX= 1 deg
b:Ts/UseQt                             = "True"
# b:Gr/Enable                          = "False"                # CHANGE

# b:Ts/PauseBeforeQuit                 = "True"
i:Ts/NumberOfThreads                   = 20

# sv:Ph/Default/LayeredMassGeometryWorlds = 1 "Inserts"

s:Ge/World/Material                    = "Air"
d:Ge/World/HLX                         = 1. m
d:Ge/World/HLY                         = 1. m
d:Ge/World/HLZ                         = 1. m
s:Gr/ViewA/Type                        = "OpenGL"
d:Gr/ViewA/Theta                       = 45. deg
d:Gr/ViewA/Phi                         = 45. deg
s:Gr/ViewA/CenterOn                    = "MyBox"

u:So/Example/BeamEnergySpread          = 0.001

s:So/Example/BeamEnergySpectrumType       = "Continuous"
s:So/Example/Type                      = "Beam"
s:So/Example/Component                 = "BeamPosition"
s:So/Example/BeamParticle              = "gamma"
s:So/Example/BeamPositionDistribution  = "Flat"
s:So/Example/BeamPositionCutoffShape   = "Rectangle"
dc:So/Example/BeamPositionCutoffX      = 0.07 cm
dc:So/Example/BeamPositionCutoffY      = 0.07 cm
dc:So/Example/BeamPositionSpreadX      = 0.1 cm
dc:So/Example/BeamPositionSpreadY      = 0.1 cm
sc:So/Example/BeamAngularDistribution  = "Flat"
dc:So/Example/BeamAngularCutoffX       = 0.04 rad
dc:So/Example/BeamAngularCutoffY       = 0.160793105 rad # Cheating a bit
i:So/Example/NumberOfHistoriesInRun    = 50#0000000

sv:Ma/CWO/Components = 3 "Cadmium" "Tungsten" "Oxygen"
uv:Ma/CWO/Fractions = 3 .312 .178 .510
d:Ma/CWO/Density = 7.9 g/cm3
s:Ma/CWO/DefaultColor= "yellow"

d:Ge/BeamPosition/RotX                 = 180. deg
d:Ge/BeamPosition/RotY                 = 0. deg
d:Ge/BeamPosition/RotZ                 = 0. deg
d:Ge/BeamPosition/TransX               = 0 m
d:Ge/BeamPosition/TransY               = 0 m

i:Ts/ShowHistoryCountAtInterval        = 100000


s:Ge/MyBox/Type                        = "TsBox"
s:Ge/MyBox/Material                    = "CWO"
s:Ge/MyBox/Parent                      = "World"
dc:Ge/MyBox/HLX                        = 7.5 mm
dc:Ge/MyBox/HLY                        = .2007 m # 0.336 pixel pitch * 1024 # Should be 0.392
dc:Ge/MyBox/HLZ                        = .0500 m # 0.336 pixel pitch * 32
dc:Ge/MyBox/TransX                     = 0. m
dc:Ge/MyBox/TransY                     = 0. m
dc:Ge/MyBox/TransZ                     = -0.5 m
dc:Ge/MyBox/RotX                       = 0. deg
dc:Ge/MyBox/RotY                       = 90. deg
dc:Ge/MyBox/RotZ                       = 0. deg

s:Sc/Readout_Adipose/Quantity                  = "EnergyDeposit"
s:Sc/Readout_Adipose/Component                   = "MyBox"
i:Sc/Readout_Adipose/YBins                     = 512
i:Sc/Readout_Adipose/ZBins                     = 124 # Just changed this
i:Sc/Readout_Adipose/XBins                     = 1 # Just changed this
# i:Sc/Readout_Adipose/EBins                     = 50 # defaults to 1, that is, un-binned
# d:Sc/Readout_Adipose/EBinMin                   = .001 MeV # defaults to zero
# d:Sc/Readout_Adipose/EBinMax                   = 1. MeV # must be specified if EBins is greater than 1
s:Sc/Readout_Adipose/OutputType                = "csv"
s:Sc/Readout_Adipose/IfOutputFileAlreadyExists = "overwrite"
#s:Sc/Readout_Adipose/SplitByTimeFeature        = "beam_energy"
#s:Sc/Readout_Adipose/OutputFile              = "runs/CT_readout_al_6"

# s:Sc/Readout_light_primary/OnlyIncludeParticlesOfGeneration = "Primary"
# s:Sc/Readout_light_primary/Quantity                  = "SurfaceTrackCount"
# s:Sc/Readout_light_primary/Surface                   = "MyBox/XPlusSurface"
# i:Sc/Readout_light_primary/YBins                     = 1024
# i:Sc/Readout_light_primary/ZBins                     = 32
# i:Sc/Readout_light_primary/EBins                     = 50 # defaults to 1, that is, un-binned
# d:Sc/Readout_light_primary/EBinMin                   = .001 MeV # defaults to zero
# d:Sc/Readout_light_primary/EBinMax                   = 1. MeV # must be specified if EBins is greater than 1
# s:Sc/Readout_light_primary/OutputType                = "csv"
# s:Sc/Readout_light_primary/SplitByTimeFeature        = "beam_energy"
# s:Sc/Readout_light_primary/IfOutputFileAlreadyExists = "overwrite"

# s:Sc/Readout_light_secondary/OnlyIncludeParticlesOfGeneration = "Secondary"
# s:Sc/Readout_light_secondary/Quantity                  = "SurfaceTrackCount"
# s:Sc/Readout_light_secondary/Surface                   = "MyBox/XPlusSurface"
# i:Sc/Readout_light_secondary/YBins                     = 1024
# i:Sc/Readout_light_secondary/ZBins                     = 32
# i:Sc/Readout_light_secondary/EBins                     = 50 # defaults to 1, that is, un-binned
# d:Sc/Readout_light_secondary/EBinMin                   = .001 MeV # defaults to zero
# d:Sc/Readout_light_secondary/EBinMax                   = 1. MeV # must be specified if EBins is greater than 1
# s:Sc/Readout_light_secondary/OutputType                = "csv"
# s:Sc/Readout_light_secondary/SplitByTimeFeature        = "beam_energy"
# s:Sc/Readout_light_secondary/IfOutputFileAlreadyExists = "overwrite"

s:Ge/ScoringCylinder/Type              = "TsCylinder"
s:Ge/ScoringCylinder/Parent            = "World"
s:Ge/ScoringCylinder/Material          = "G4_WATER"
dc:Ge/ScoringCylinder/RMin             = 0. cm
dc:Ge/ScoringCylinder/RMax             = 8. cm
dc:Ge/ScoringCylinder/HL               = 10. cm
dc:Ge/ScoringCylinder/SPhi             = 0. deg
dc:Ge/ScoringCylinder/DPhi             = 360. deg
dc:Ge/ScoringCylinder/RotX             = 0. deg
dc:Ge/ScoringCylinder/RotY             = 90. deg
dc:Ge/ScoringCylinder/RotZ             = 0. deg

dv:So/Example/BeamEnergySpectrumValues = 200 0.015 0.045 0.075 0.105 0.135 0.165 0.195 0.225 0.255 0.285 0.315 0.345 0.375 0.405 0.435 0.465 0.495 0.525 0.555 0.585 0.615 0.645 0.675 0.705 0.735 0.765 0.795 0.825 0.855 0.885 0.915 0.945 0.975 1.005 1.035 1.065 1.095 1.125 1.155 1.185 1.215 1.245 1.275 1.305 1.335 1.365 1.395 1.425 1.455 1.485 1.515 1.545 1.575 1.605 1.635 1.665 1.695 1.725 1.755 1.785 1.815 1.845 1.875 1.905 1.935 1.965 1.995 2.025 2.055 2.085 2.115 2.145 2.175 2.205 2.235 2.265 2.295 2.325 2.355 2.385 2.415 2.445 2.475 2.505 2.535 2.565 2.595 2.625 2.655 2.685 2.715 2.745 2.775 2.805 2.835 2.865 2.895 2.925 2.955 2.985 3.015 3.045 3.075 3.105 3.135 3.165 3.195 3.225 3.255 3.285 3.315 3.345 3.375 3.405 3.435 3.465 3.495 3.525 3.555 3.585 3.615 3.645 3.675 3.705 3.735 3.765 3.795 3.825 3.855 3.885 3.915 3.945 3.975 4.005 4.035 4.065 4.095 4.125 4.155 4.185 4.215 4.245 4.275 4.305 4.335 4.365 4.395 4.425 4.455 4.485 4.515 4.545 4.575 4.605 4.635 4.665 4.695 4.725 4.755 4.785 4.815 4.845 4.875 4.905 4.935 4.965 4.995 5.025 5.055 5.085 5.115 5.145 5.175 5.205 5.235 5.265 5.295 5.325 5.355 5.385 5.415 5.445 5.475 5.505 5.535 5.565 5.595 5.625 5.655 5.685 5.715 5.745 5.775 5.805 5.835 5.865 5.895 5.925 5.955 5.985 MeV
uv:So/Example/BeamEnergySpectrumWeights = 200 0.00932948226572424 0.08168943504840458 0.0794005993790592 0.06285985738122206 0.051316602508822834 0.04306470340452115 0.03710835702215279 0.032547478314931905 0.02897736486443427 0.02611086267252483 0.023677610372538432 0.021682645753916045 0.019976514396575686 0.018401365564700435 0.017120087783548177 0.016002370232912604 0.015023695670847685 0.014328648654309125 0.013314373713528047 0.012585741434049719 0.011913028617366109 0.01130765425287674 0.010744765246006182 0.010220163438886962 0.009759205705038607 0.009320246318415801 0.008889347394898543 0.008495728113244429 0.008163234010140697 0.007874736601488066 0.007538716045775658 0.007212267290001086 0.006959538186379311 0.006720075261618744 0.0064584460633179295 0.006258613748826293 0.006025867876653682 0.005829226162141324 0.005628218363446795 0.0054460183119985385 0.005303952649763308 0.005118897850965171 0.004965581125645116 0.004789762274155417 0.0046419871172204245 0.004507478139146643 0.00440521101349504 0.0042498791723986 0.004146100709914709 0.004018812563372977 0.0039036151114895633 0.0037932875227324157 0.003699080860186359 0.00362267438699838 0.0034794332405602576 0.0033968134937284217 0.003342237441451294 0.0032272079158825787 0.0031543278953032757 0.0030832950641856605 0.003003362138389006 0.002939214286174044 0.0028471906657190718 0.002784050371392303 0.0027173836244568576 0.002678760572076121 0.0026102466356789887 0.002541564772967157 0.002482118857563763 0.0024129332159078354 0.0023756535740446895 0.0023417324584755206 0.002275401564169473 0.002224016111871624 0.002172966512203173 0.0021336717545636405 0.0020797674075453084 0.002044838734087947 0.002002353376469137 0.0019541585241505655 0.0019089863454965737 0.001859280156345713 0.0018204891776502777 0.0017780038200314676 0.0017471053781268784 0.0017192296098868685 0.001694376515311438 0.001643679560903854 0.001619968365268376 0.0015935199707033064 0.0015634947456351512 0.0015187927606623163 0.001501664276563033 0.0014795147956542542 0.0014505642990001717 0.0014021007645780826 0.0013799848689322433 0.0013534189259468848 0.001326584300858008 0.00131603852829492 0.0012847034779721136 0.001241848682460966 0.0012354842751338797 0.001187490934392947 0.001191302861736611 0.0011742919260576171 0.001154090390399345 0.0011232087411262256 0.0011116218254120045 0.0010882968603003337 0.0010503958910728025 0.0010357023385366528 0.001009472248180692 0.0009918735704002519 0.0009875074862180815 0.000966785378984243 0.000951991070659274 0.00093205821710452 0.0009179356140383464 0.0008955174510260493 0.0008843167658356357 0.0008603536807281093 0.0008381370292934509 0.0008251899104301692 0.0008196315494136371 0.0007991445390203768 0.000789471983293723 0.0007702444202607041 0.000769236862372511 0.0007422007257059956 0.0007313191005135098 0.0007064156280436698 0.0006997321607186553 0.0006941066291762437 0.0006710167609051513 0.0006598328683462075 0.0006622677999093409 0.0006281787580254735 0.0006220830328019051 0.0006058781434334657 0.0005978344729593906 0.0005778848267731667 0.00057741463309201 0.0005607731353053535 0.0005385900691336348 0.0005337034133758982 0.0005329645375912233 0.0005051223546141532 0.0005045681977756469 0.0004862306442105321 0.0004860291326328935 0.00046730534854397124 0.0004496227076061819 0.0004446688813225657 0.0004323095045607301 0.0004240643225090164 0.0004160038594034713 0.00040910208786934846 0.0003942406090184998 0.00037978215332292847 0.0003759870186107344 0.00036456802921121234 0.00036408104289858566 0.00035118430192971364 0.0003340894030933703 0.00032858141997124787 0.0003100087695655546 0.0002963899454434775 0.00029514729071470605 0.0002893034549631859 0.0002755670824208196 0.0002750297182137833 0.000264517530913635 0.000246935645764665 0.0002452563826176765 0.0002298911248227313 0.00022423200801737994 0.0002070867312866269 0.00019887513449785295 0.00019449225768421286 0.00018092381145654542 0.00016960557784584265 0.0001644015413533252 0.00015095400207224094 0.00014360218801472512 0.00013753501026465552 0.00012536706950157654 0.00012026714732417234 0.00010495730521307781 9.65593102149881e-05 9.017643099328468e-05 7.673225023849442e-05 6.990100775654502e-05 6.168941096777106e-05 5.478763943364815e-05 4.23829225668438e-05 3.5491226611602824e-05 2.4560902787854407e-05 1.404686829824445e-05 5.57028378487569e-06
