# b:Ts/UseQt                             = "True"
b:Gr/Enable                          = "False"                # CHANGE

# b:Ts/PauseBeforeQuit                 = "True"
i:Ts/NumberOfThreads                   = 20 

sv:Ph/Default/LayeredMassGeometryWorlds = 1 "Inserts"

s:Ge/World/Material                    = "Vacuum"
d:Ge/World/HLX                         = 1. m
d:Ge/World/HLY                         = 1. m
d:Ge/World/HLZ                         = 1. m

s:Gr/ViewA/Type                        = "OpenGL"
d:Gr/ViewA/Theta                       = 45. deg
d:Gr/ViewA/Phi                         = 45. deg
s:Gr/ViewA/CenterOn                    = "MyBox"

u:So/Example/BeamEnergySpread          = 0.001

s:So/Example/BeamEnergySpectrumType       = "Continuous"
s:So/Example/Type                      = "Beam"
s:So/Example/Component                 = "BeamPosition"
s:So/Example/BeamParticle              = "gamma"
s:So/Example/BeamPositionDistribution  = "Flat"
s:So/Example/BeamPositionCutoffShape   = "Rectangle"
dc:So/Example/BeamPositionCutoffX      = 0.07 cm
dc:So/Example/BeamPositionCutoffY      = 0.07 cm
dc:So/Example/BeamPositionSpreadX      = 0.1 cm
dc:So/Example/BeamPositionSpreadY      = 0.1 cm
sc:So/Example/BeamAngularDistribution  = "Flat"
dc:So/Example/BeamAngularCutoffY       = 0.160793105 rad
dc:So/Example/BeamAngularCutoffX       = 0.160793105 rad # Cheating a bit
i:So/Example/NumberOfHistoriesInRun    = 200000000

sv:Ma/CWO/Components = 3 "Cadmium" "Tungsten" "Oxygen"
uv:Ma/CWO/Fractions = 3 .312 .178 .510
d:Ma/CWO/Density = 7.9 g/cm3
s:Ma/CWO/DefaultColor= "yellow"

d:Ge/BeamPosition/RotX                 = 180. deg
d:Ge/BeamPosition/RotY                 = 0. deg
d:Ge/BeamPosition/RotZ                 = 0. deg
d:Ge/BeamPosition/TransX               = 0 m
d:Ge/BeamPosition/TransY               = 0 m

i:Ts/ShowHistoryCountAtInterval        = 100000


s:Ge/MyBox/Type                        = "TsBox"
s:Ge/MyBox/Material                    = "Air"
s:Ge/MyBox/Parent                      = "World"
dc:Ge/MyBox/HLX                        = 3.75 mm
dc:Ge/MyBox/HLY                        = .2007 m # 0.336 pixel pitch * 1024 # Should be 0.392
dc:Ge/MyBox/HLZ                        = .0500 m # 0.336 pixel pitch * 32
dc:Ge/MyBox/TransX                     = 0. m
dc:Ge/MyBox/TransY                     = 0. m
dc:Ge/MyBox/TransZ                     = -0.5 m
dc:Ge/MyBox/RotX                       = 0. deg
dc:Ge/MyBox/RotY                       = 90. deg
dc:Ge/MyBox/RotZ                       = 0. deg

s:Sc/Readout_w6/Quantity = "PhaseSpace"
s:Sc/Readout_w6/Surface  = "MyBox/XPlusSurface"# s:Sc/Readout/OutputFile = "PhotodiodeSurface"
s:Sc/Readout_w6/OutputType = "Binary"
i:Sc/Readout_w6/BounceLimit = 200000000 
s:Sc/Readout_w6/IfOutputFileAlreadyExists = "Overwrite"

#s:Sc/Readout_Adipose/Quantity                  = "EnergyDeposit"
#s:Sc/Readout_Adipose/Component                   = "MyBox"
#i:Sc/Readout_Adipose/YBins                     = 512
#i:Sc/Readout_Adipose/ZBins                     = 128 # Just changed this
#i:Sc/Readout_Adipose/XBins                     = 1 # Just changed this
#s:Sc/Readout_Adipose/OutputType                = "csv"
#s:Sc/Readout_Adipose/IfOutputFileAlreadyExists = "overwrite"

s:Ge/ScoringCylinder/Type              = "TsCylinder"
s:Ge/ScoringCylinder/Parent            = "World"
s:Ge/ScoringCylinder/Material          = "G4_WATER"
dc:Ge/ScoringCylinder/RMin             = 0. cm
dc:Ge/ScoringCylinder/RMax             = 8. cm
dc:Ge/ScoringCylinder/HL               = 10. cm
dc:Ge/ScoringCylinder/SPhi             = 0. deg
dc:Ge/ScoringCylinder/DPhi             = 360. deg
dc:Ge/ScoringCylinder/RotX             = 0. deg
dc:Ge/ScoringCylinder/RotY             = 90. deg
dc:Ge/ScoringCylinder/RotZ             = 0. deg


dv:So/Example/BeamEnergySpectrumValues = 200 0.015 0.045 0.075 0.105 0.135 0.165 0.195 0.225 0.255 0.285 0.315 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5.985 MeV
uv:So/Example/BeamEnergySpectrumWeights = 200 2.2262865210080333e-05 7.51092193361817e-05 0.00020166596944515869 0.0009358167568905561 0.001548357963127378 0.0014901719949593573 0.0017952322815272112 0.0027990385706452986 0.00498287323864255 0.007984458284023537 0.010987253645955082 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3.9852698218460666e-05
