
s:Ge/InsertGroup/Type="Group"
s:Ge/InsertGroup/Parent = "World"
d:Ge/InsertGroup/TransX=0. m
d:Ge/InsertGroup/TransY=0. m
d:Ge/InsertGroup/TransZ=0. m
d:Ge/InsertGroup/RotX=Tf/beam_energy/Value  deg
d:Ge/InsertGroup/RotY=0. deg


d:Tf/TimelineEnd = 360. ms
i:Tf/NumberOfSequentialTimes = 360
s:Tf/beam_energy/Function = "Step"
dv:Tf/beam_energy/Times = 360 1 2 3 4 5 6 7 8 9 10 11 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360 ms
dv:Tf/beam_energy/Values = 360 1 2 3 4 5 6 7 8 9 10 11 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360 deg


s:Ge/Insert2/Type     = "TsCylinder"
s:Ge/Insert2/Parent = "InsertGroup"
b:Ge/Insert2/IsParallel = "True"
s:Ge/Insert2/ParallelWorldName = "Inserts"
s:Ge/Insert2/Material = "G4_LUNG_ICRP"
d:Ge/Insert2/RMin = 0.0 cm
d:Ge/Insert2/RMax = 0.75 cm
d:Ge/Insert2/HL = 10. cm #3 mm long
d:Ge/Insert2/SPhi = 0. deg
d:Ge/Insert2/DPhi = 360. deg
d:Ge/Insert2/TransX = 0. cm
d:Ge/Insert2/TransY = 4.996000642115686 cm
d:Ge/Insert2/TransZ = 0.19994395209569293 cm
d:Ge/Insert2/RotX = 0. deg
d:Ge/Insert2/RotY = 90. deg
d:Ge/Insert2/RotZ = 0. deg

s:Ge/Insert3/Type     = "TsCylinder"
s:Ge/Insert3/Parent = "InsertGroup"
b:Ge/Insert3/IsParallel = "True"
s:Ge/Insert3/ParallelWorldName = "Inserts"
s:Ge/Insert3/Material = "G4_LUNG_ICRP"
d:Ge/Insert3/RMin = 0.0 cm
d:Ge/Insert3/RMax = 0.45 cm
d:Ge/Insert3/HL = 10. cm #3 mm long
d:Ge/Insert3/SPhi = 0. deg
d:Ge/Insert3/DPhi = 360. deg
d:Ge/Insert3/TransX = 0. cm
d:Ge/Insert3/TransY = 4.746178447708285 cm
d:Ge/Insert3/TransZ = -1.5728287073007594 cm
d:Ge/Insert3/RotX = 0. deg
d:Ge/Insert3/RotY = 90. deg
d:Ge/Insert3/RotZ = 0. deg

s:Ge/Insert4/Type     = "TsCylinder"
s:Ge/Insert4/Parent = "InsertGroup"
b:Ge/Insert4/IsParallel = "True"
s:Ge/Insert4/ParallelWorldName = "Inserts"
s:Ge/Insert4/Material = "G4_LUNG_ICRP"
d:Ge/Insert4/RMin = 0.0 cm
d:Ge/Insert4/RMax = 0.4 cm
d:Ge/Insert4/HL = 10. cm #3 mm long
d:Ge/Insert4/SPhi = 0. deg
d:Ge/Insert4/DPhi = 360. deg
d:Ge/Insert4/TransX = 0. cm
d:Ge/Insert4/TransY = 4.010478731488857 cm
d:Ge/Insert4/TransZ = -2.9859772846214905 cm
d:Ge/Insert4/RotX = 0. deg
d:Ge/Insert4/RotY = 90. deg
d:Ge/Insert4/RotZ = 0. deg

s:Ge/Insert5/Type     = "TsCylinder"
s:Ge/Insert5/Parent = "InsertGroup"
b:Ge/Insert5/IsParallel = "True"
s:Ge/Insert5/ParallelWorldName = "Inserts"
s:Ge/Insert5/Material = "G4_LUNG_ICRP"
d:Ge/Insert5/RMin = 0.0 cm
d:Ge/Insert5/RMax = 0.35 cm
d:Ge/Insert5/HL = 10. cm #3 mm long
d:Ge/Insert5/SPhi = 0. deg
d:Ge/Insert5/DPhi = 360. deg
d:Ge/Insert5/TransX = 0. cm
d:Ge/Insert5/TransY = 3.0291019740716836 cm
d:Ge/Insert5/TransZ = -3.978007193391564 cm
d:Ge/Insert5/RotX = 0. deg
d:Ge/Insert5/RotY = 90. deg
d:Ge/Insert5/RotZ = 0. deg

s:Ge/Insert6/Type     = "TsCylinder"
s:Ge/Insert6/Parent = "InsertGroup"
b:Ge/Insert6/IsParallel = "True"
s:Ge/Insert6/ParallelWorldName = "Inserts"
s:Ge/Insert6/Material = "G4_LUNG_ICRP"
d:Ge/Insert6/RMin = 0.0 cm
d:Ge/Insert6/RMax = 0.3 cm
d:Ge/Insert6/HL = 10. cm #3 mm long
d:Ge/Insert6/SPhi = 0. deg
d:Ge/Insert6/DPhi = 360. deg
d:Ge/Insert6/TransX = 0. cm
d:Ge/Insert6/TransY = 1.9966979858715082 cm
d:Ge/Insert6/TransZ = -4.58401539626741 cm
d:Ge/Insert6/RotX = 0. deg
d:Ge/Insert6/RotY = 90. deg
d:Ge/Insert6/RotZ = 0. deg

s:Ge/Insert7/Type     = "TsCylinder"
s:Ge/Insert7/Parent = "InsertGroup"
b:Ge/Insert7/IsParallel = "True"
s:Ge/Insert7/ParallelWorldName = "Inserts"
s:Ge/Insert7/Material = "G4_LUNG_ICRP"
d:Ge/Insert7/RMin = 0.0 cm
d:Ge/Insert7/RMax = 0.25 cm
d:Ge/Insert7/HL = 10. cm #3 mm long
d:Ge/Insert7/SPhi = 0. deg
d:Ge/Insert7/DPhi = 360. deg
d:Ge/Insert7/TransX = 0. cm
d:Ge/Insert7/TransY = 1.0461899278239009 cm
d:Ge/Insert7/TransZ = -4.889323740040111 cm
d:Ge/Insert7/RotX = 0. deg
d:Ge/Insert7/RotY = 90. deg
d:Ge/Insert7/RotZ = 0. deg

s:Ge/Insert8/Type     = "TsCylinder"
s:Ge/Insert8/Parent = "InsertGroup"
b:Ge/Insert8/IsParallel = "True"
s:Ge/Insert8/ParallelWorldName = "Inserts"
s:Ge/Insert8/Material = "G4_LUNG_ICRP"
d:Ge/Insert8/RMin = 0.0 cm
d:Ge/Insert8/RMax = 0.2 cm
d:Ge/Insert8/HL = 10. cm #3 mm long
d:Ge/Insert8/SPhi = 0. deg
d:Ge/Insert8/DPhi = 360. deg
d:Ge/Insert8/TransX = 0. cm
d:Ge/Insert8/TransY = 0.25387110514781086 cm
d:Ge/Insert8/TransZ = -4.993550786962222 cm
d:Ge/Insert8/RotX = 0. deg
d:Ge/Insert8/RotY = 90. deg
d:Ge/Insert8/RotZ = 0. deg

s:Ge/Insert9/Type     = "TsCylinder"
s:Ge/Insert9/Parent = "InsertGroup"
b:Ge/Insert9/IsParallel = "True"
s:Ge/Insert9/ParallelWorldName = "Inserts"
s:Ge/Insert9/Material = "G4_LUNG_ICRP"
d:Ge/Insert9/RMin = 0.0 cm
d:Ge/Insert9/RMax = 0.15 cm
d:Ge/Insert9/HL = 10. cm #3 mm long
d:Ge/Insert9/SPhi = 0. deg
d:Ge/Insert9/DPhi = 360. deg
d:Ge/Insert9/TransX = 0. cm
d:Ge/Insert9/TransY = -0.34574412358734263 cm
d:Ge/Insert9/TransZ = -4.988031776262539 cm
d:Ge/Insert9/RotX = 0. deg
d:Ge/Insert9/RotY = 90. deg
d:Ge/Insert9/RotZ = 0. deg

s:Ge/Insert10/Type     = "TsCylinder"
s:Ge/Insert10/Parent = "InsertGroup"
b:Ge/Insert10/IsParallel = "True"
s:Ge/Insert10/ParallelWorldName = "Inserts"
s:Ge/Insert10/Material = "G4_LUNG_ICRP"
d:Ge/Insert10/RMin = 0.0 cm
d:Ge/Insert10/RMax = 0.1 cm
d:Ge/Insert10/HL = 10. cm #3 mm long
d:Ge/Insert10/SPhi = 0. deg
d:Ge/Insert10/DPhi = 360. deg
d:Ge/Insert10/TransX = 0. cm
d:Ge/Insert10/TransY = -0.7432499836786259 cm
d:Ge/Insert10/TransZ = -4.9444493588024265 cm
d:Ge/Insert10/RotX = 0. deg
d:Ge/Insert10/RotY = 90. deg
d:Ge/Insert10/RotZ = 0. deg

s:Ge/Insert12/Type     = "TsCylinder"
s:Ge/Insert12/Parent = "InsertGroup"
b:Ge/Insert12/IsParallel = "True"
s:Ge/Insert12/ParallelWorldName = "Inserts"
s:Ge/Insert12/Material = "G4_BONE_COMPACT_ICRU"
d:Ge/Insert12/RMin = 0.0 cm
d:Ge/Insert12/RMax = 0.75 cm
d:Ge/Insert12/HL = 10. cm #3 mm long
d:Ge/Insert12/SPhi = 0. deg
d:Ge/Insert12/DPhi = 360. deg
d:Ge/Insert12/TransX = 0. cm
d:Ge/Insert12/TransY = -2.3248437792099135 cm
d:Ge/Insert12/TransZ = -4.4266354494434 cm
d:Ge/Insert12/RotX = 0. deg
d:Ge/Insert12/RotY = 90. deg
d:Ge/Insert12/RotZ = 0. deg

s:Ge/Insert13/Type     = "TsCylinder"
s:Ge/Insert13/Parent = "InsertGroup"
b:Ge/Insert13/IsParallel = "True"
s:Ge/Insert13/ParallelWorldName = "Inserts"
s:Ge/Insert13/Material = "G4_BONE_COMPACT_ICRU"
d:Ge/Insert13/RMin = 0.0 cm
d:Ge/Insert13/RMax = 0.45 cm
d:Ge/Insert13/HL = 10. cm #3 mm long
d:Ge/Insert13/SPhi = 0. deg
d:Ge/Insert13/DPhi = 360. deg
d:Ge/Insert13/TransX = 0. cm
d:Ge/Insert13/TransY = -3.7351988401780383 cm
d:Ge/Insert13/TransZ = -3.3238967529591883 cm
d:Ge/Insert13/RotX = 0. deg
d:Ge/Insert13/RotY = 90. deg
d:Ge/Insert13/RotZ = 0. deg

s:Ge/Insert14/Type     = "TsCylinder"
s:Ge/Insert14/Parent = "InsertGroup"
b:Ge/Insert14/IsParallel = "True"
s:Ge/Insert14/ParallelWorldName = "Inserts"
s:Ge/Insert14/Material = "G4_BONE_COMPACT_ICRU"
d:Ge/Insert14/RMin = 0.0 cm
d:Ge/Insert14/RMax = 0.4 cm
d:Ge/Insert14/HL = 10. cm #3 mm long
d:Ge/Insert14/SPhi = 0. deg
d:Ge/Insert14/DPhi = 360. deg
d:Ge/Insert14/TransX = 0. cm
d:Ge/Insert14/TransY = -4.591171549349915 cm
d:Ge/Insert14/TransZ = -1.9801878204957988 cm
d:Ge/Insert14/RotX = 0. deg
d:Ge/Insert14/RotY = 90. deg
d:Ge/Insert14/RotZ = 0. deg

s:Ge/Insert15/Type     = "TsCylinder"
s:Ge/Insert15/Parent = "InsertGroup"
b:Ge/Insert15/IsParallel = "True"
s:Ge/Insert15/ParallelWorldName = "Inserts"
s:Ge/Insert15/Material = "G4_BONE_COMPACT_ICRU"
d:Ge/Insert15/RMin = 0.0 cm
d:Ge/Insert15/RMax = 0.35 cm
d:Ge/Insert15/HL = 10. cm #3 mm long
d:Ge/Insert15/SPhi = 0. deg
d:Ge/Insert15/DPhi = 360. deg
d:Ge/Insert15/TransX = 0. cm
d:Ge/Insert15/TransY = -4.959606272950172 cm
d:Ge/Insert15/TransZ = -0.6342756635038914 cm
d:Ge/Insert15/RotX = 0. deg
d:Ge/Insert15/RotY = 90. deg
d:Ge/Insert15/RotZ = 0. deg

s:Ge/Insert16/Type     = "TsCylinder"
s:Ge/Insert16/Parent = "InsertGroup"
b:Ge/Insert16/IsParallel = "True"
s:Ge/Insert16/ParallelWorldName = "Inserts"
s:Ge/Insert16/Material = "G4_BONE_COMPACT_ICRU"
d:Ge/Insert16/RMin = 0.0 cm
d:Ge/Insert16/RMax = 0.3 cm
d:Ge/Insert16/HL = 10. cm #3 mm long
d:Ge/Insert16/SPhi = 0. deg
d:Ge/Insert16/DPhi = 360. deg
d:Ge/Insert16/TransX = 0. cm
d:Ge/Insert16/TransY = -4.968222777442322 cm
d:Ge/Insert16/TransZ = 0.5628165186837536 cm
d:Ge/Insert16/RotX = 0. deg
d:Ge/Insert16/RotY = 90. deg
d:Ge/Insert16/RotZ = 0. deg

s:Ge/Insert17/Type     = "TsCylinder"
s:Ge/Insert17/Parent = "InsertGroup"
b:Ge/Insert17/IsParallel = "True"
s:Ge/Insert17/ParallelWorldName = "Inserts"
s:Ge/Insert17/Material = "G4_BONE_COMPACT_ICRU"
d:Ge/Insert17/RMin = 0.0 cm
d:Ge/Insert17/RMax = 0.25 cm
d:Ge/Insert17/HL = 10. cm #3 mm long
d:Ge/Insert17/SPhi = 0. deg
d:Ge/Insert17/DPhi = 360. deg
d:Ge/Insert17/TransX = 0. cm
d:Ge/Insert17/TransY = -4.75737353011303 cm
d:Ge/Insert17/TransZ = 1.538634815341148 cm
d:Ge/Insert17/RotX = 0. deg
d:Ge/Insert17/RotY = 90. deg
d:Ge/Insert17/RotZ = 0. deg

s:Ge/Insert18/Type     = "TsCylinder"
s:Ge/Insert18/Parent = "InsertGroup"
b:Ge/Insert18/IsParallel = "True"
s:Ge/Insert18/ParallelWorldName = "Inserts"
s:Ge/Insert18/Material = "G4_BONE_COMPACT_ICRU"
d:Ge/Insert18/RMin = 0.0 cm
d:Ge/Insert18/RMax = 0.2 cm
d:Ge/Insert18/HL = 10. cm #3 mm long
d:Ge/Insert18/SPhi = 0. deg
d:Ge/Insert18/DPhi = 360. deg
d:Ge/Insert18/TransX = 0. cm
d:Ge/Insert18/TransY = -4.451477389170967 cm
d:Ge/Insert18/TransZ = 2.2769165671362734 cm
d:Ge/Insert18/RotX = 0. deg
d:Ge/Insert18/RotY = 90. deg
d:Ge/Insert18/RotZ = 0. deg

s:Ge/Insert19/Type     = "TsCylinder"
s:Ge/Insert19/Parent = "InsertGroup"
b:Ge/Insert19/IsParallel = "True"
s:Ge/Insert19/ParallelWorldName = "Inserts"
s:Ge/Insert19/Material = "G4_BONE_COMPACT_ICRU"
d:Ge/Insert19/RMin = 0.0 cm
d:Ge/Insert19/RMax = 0.15 cm
d:Ge/Insert19/HL = 10. cm #3 mm long
d:Ge/Insert19/SPhi = 0. deg
d:Ge/Insert19/DPhi = 360. deg
d:Ge/Insert19/TransX = 0. cm
d:Ge/Insert19/TransY = -4.146890171333705 cm
d:Ge/Insert19/TransZ = 2.793439082367094 cm
d:Ge/Insert19/RotX = 0. deg
d:Ge/Insert19/RotY = 90. deg
d:Ge/Insert19/RotZ = 0. deg

s:Ge/Insert20/Type     = "TsCylinder"
s:Ge/Insert20/Parent = "InsertGroup"
b:Ge/Insert20/IsParallel = "True"
s:Ge/Insert20/ParallelWorldName = "Inserts"
s:Ge/Insert20/Material = "G4_BONE_COMPACT_ICRU"
d:Ge/Insert20/RMin = 0.0 cm
d:Ge/Insert20/RMax = 0.1 cm
d:Ge/Insert20/HL = 10. cm #3 mm long
d:Ge/Insert20/SPhi = 0. deg
d:Ge/Insert20/DPhi = 360. deg
d:Ge/Insert20/TransX = 0. cm
d:Ge/Insert20/TransY = -3.9103937606092676 cm
d:Ge/Insert20/TransZ = 3.1158980466292716 cm
d:Ge/Insert20/RotX = 0. deg
d:Ge/Insert20/RotY = 90. deg
d:Ge/Insert20/RotZ = 0. deg

s:Ge/Insert22/Type     = "TsCylinder"
s:Ge/Insert22/Parent = "InsertGroup"
b:Ge/Insert22/IsParallel = "True"
s:Ge/Insert22/ParallelWorldName = "Inserts"
s:Ge/Insert22/Material = "G4_BONE_CORTICAL_ICRP"
d:Ge/Insert22/RMin = 0.0 cm
d:Ge/Insert22/RMax = 0.75 cm
d:Ge/Insert22/HL = 10. cm #3 mm long
d:Ge/Insert22/SPhi = 0. deg
d:Ge/Insert22/DPhi = 360. deg
d:Ge/Insert22/TransX = 0. cm
d:Ge/Insert22/TransY = -2.6711568629057743 cm
d:Ge/Insert22/TransZ = 4.226691497347705 cm
d:Ge/Insert22/RotX = 0. deg
d:Ge/Insert22/RotY = 90. deg
d:Ge/Insert22/RotZ = 0. deg

s:Ge/Insert23/Type     = "TsCylinder"
s:Ge/Insert23/Parent = "InsertGroup"
b:Ge/Insert23/IsParallel = "True"
s:Ge/Insert23/ParallelWorldName = "Inserts"
s:Ge/Insert23/Material = "G4_BONE_CORTICAL_ICRP"
d:Ge/Insert23/RMin = 0.0 cm
d:Ge/Insert23/RMax = 0.45 cm
d:Ge/Insert23/HL = 10. cm #3 mm long
d:Ge/Insert23/SPhi = 0. deg
d:Ge/Insert23/DPhi = 360. deg
d:Ge/Insert23/TransX = 0. cm
d:Ge/Insert23/TransY = -1.0109796075302477 cm
d:Ge/Insert23/TransZ = 4.896725460259947 cm
d:Ge/Insert23/RotX = 0. deg
d:Ge/Insert23/RotY = 90. deg
d:Ge/Insert23/RotZ = 0. deg

s:Ge/Insert24/Type     = "TsCylinder"
s:Ge/Insert24/Parent = "InsertGroup"
b:Ge/Insert24/IsParallel = "True"
s:Ge/Insert24/ParallelWorldName = "Inserts"
s:Ge/Insert24/Material = "G4_BONE_CORTICAL_ICRP"
d:Ge/Insert24/RMin = 0.0 cm
d:Ge/Insert24/RMax = 0.4 cm
d:Ge/Insert24/HL = 10. cm #3 mm long
d:Ge/Insert24/SPhi = 0. deg
d:Ge/Insert24/DPhi = 360. deg
d:Ge/Insert24/TransX = 0. cm
d:Ge/Insert24/TransY = 0.580692817861057 cm
d:Ge/Insert24/TransZ = 4.966165105117286 cm
d:Ge/Insert24/RotX = 0. deg
d:Ge/Insert24/RotY = 90. deg
d:Ge/Insert24/RotZ = 0. deg

s:Ge/Insert25/Type     = "TsCylinder"
s:Ge/Insert25/Parent = "InsertGroup"
b:Ge/Insert25/IsParallel = "True"
s:Ge/Insert25/ParallelWorldName = "Inserts"
s:Ge/Insert25/Material = "G4_BONE_CORTICAL_ICRP"
d:Ge/Insert25/RMin = 0.0 cm
d:Ge/Insert25/RMax = 0.35 cm
d:Ge/Insert25/HL = 10. cm #3 mm long
d:Ge/Insert25/SPhi = 0. deg
d:Ge/Insert25/DPhi = 360. deg
d:Ge/Insert25/TransX = 0. cm
d:Ge/Insert25/TransY = 1.9305042988784868 cm
d:Ge/Insert25/TransZ = 4.612282856895453 cm
d:Ge/Insert25/RotX = 0. deg
d:Ge/Insert25/RotY = 90. deg
d:Ge/Insert25/RotZ = 0. deg

s:Ge/Insert26/Type     = "TsCylinder"
s:Ge/Insert26/Parent = "InsertGroup"
b:Ge/Insert26/IsParallel = "True"
s:Ge/Insert26/ParallelWorldName = "Inserts"
s:Ge/Insert26/Material = "G4_BONE_CORTICAL_ICRP"
d:Ge/Insert26/RMin = 0.0 cm
d:Ge/Insert26/RMax = 0.3 cm
d:Ge/Insert26/HL = 10. cm #3 mm long
d:Ge/Insert26/SPhi = 0. deg
d:Ge/Insert26/DPhi = 360. deg
d:Ge/Insert26/TransX = 0. cm
d:Ge/Insert26/TransY = 2.9715247915708116 cm
d:Ge/Insert26/TransZ = 4.021198877583655 cm
d:Ge/Insert26/RotX = 0. deg
d:Ge/Insert26/RotY = 90. deg
d:Ge/Insert26/RotZ = 0. deg

s:Ge/Insert27/Type     = "TsCylinder"
s:Ge/Insert27/Parent = "InsertGroup"
b:Ge/Insert27/IsParallel = "True"
s:Ge/Insert27/ParallelWorldName = "Inserts"
s:Ge/Insert27/Material = "G4_BONE_CORTICAL_ICRP"
d:Ge/Insert27/RMin = 0.0 cm
d:Ge/Insert27/RMax = 0.25 cm
d:Ge/Insert27/HL = 10. cm #3 mm long
d:Ge/Insert27/SPhi = 0. deg
d:Ge/Insert27/DPhi = 360. deg
d:Ge/Insert27/TransX = 0. cm
d:Ge/Insert27/TransY = 3.711183602289129 cm
d:Ge/Insert27/TransZ = 3.3506889246989626 cm
d:Ge/Insert27/RotX = 0. deg
d:Ge/Insert27/RotY = 90. deg
d:Ge/Insert27/RotZ = 0. deg

s:Ge/Insert28/Type     = "TsCylinder"
s:Ge/Insert28/Parent = "InsertGroup"
b:Ge/Insert28/IsParallel = "True"
s:Ge/Insert28/ParallelWorldName = "Inserts"
s:Ge/Insert28/Material = "G4_BONE_CORTICAL_ICRP"
d:Ge/Insert28/RMin = 0.0 cm
d:Ge/Insert28/RMax = 0.2 cm
d:Ge/Insert28/HL = 10. cm #3 mm long
d:Ge/Insert28/SPhi = 0. deg
d:Ge/Insert28/DPhi = 360. deg
d:Ge/Insert28/TransX = 0. cm
d:Ge/Insert28/TransY = 4.197606284023153 cm
d:Ge/Insert28/TransZ = 2.7166342198259477 cm
d:Ge/Insert28/RotX = 0. deg
d:Ge/Insert28/RotY = 90. deg
d:Ge/Insert28/RotZ = 0. deg

s:Ge/Insert29/Type     = "TsCylinder"
s:Ge/Insert29/Parent = "InsertGroup"
b:Ge/Insert29/IsParallel = "True"
s:Ge/Insert29/ParallelWorldName = "Inserts"
s:Ge/Insert29/Material = "G4_BONE_CORTICAL_ICRP"
d:Ge/Insert29/RMin = 0.0 cm
d:Ge/Insert29/RMax = 0.15 cm
d:Ge/Insert29/HL = 10. cm #3 mm long
d:Ge/Insert29/SPhi = 0. deg
d:Ge/Insert29/DPhi = 360. deg
d:Ge/Insert29/TransX = 0. cm
d:Ge/Insert29/TransY = 4.492634294921047 cm
d:Ge/Insert29/TransZ = 2.1945926938954443 cm
d:Ge/Insert29/RotX = 0. deg
d:Ge/Insert29/RotY = 90. deg
d:Ge/Insert29/RotZ = 0. deg

s:Ge/Insert30/Type     = "TsCylinder"
s:Ge/Insert30/Parent = "InsertGroup"
b:Ge/Insert30/IsParallel = "True"
s:Ge/Insert30/ParallelWorldName = "Inserts"
s:Ge/Insert30/Material = "G4_BONE_CORTICAL_ICRP"
d:Ge/Insert30/RMin = 0.0 cm
d:Ge/Insert30/RMax = 0.1 cm
d:Ge/Insert30/HL = 10. cm #3 mm long
d:Ge/Insert30/SPhi = 0. deg
d:Ge/Insert30/DPhi = 360. deg
d:Ge/Insert30/TransX = 0. cm
d:Ge/Insert30/TransY = 4.653643744287892 cm
d:Ge/Insert30/TransZ = 1.8285513121731536 cm
d:Ge/Insert30/RotX = 0. deg
d:Ge/Insert30/RotY = 90. deg
d:Ge/Insert30/RotZ = 0. deg

s:Ge/Insert32/Type     = "TsCylinder"
s:Ge/Insert32/Parent = "InsertGroup"
b:Ge/Insert32/IsParallel = "True"
s:Ge/Insert32/ParallelWorldName = "Inserts"
s:Ge/Insert32/Material = "G4_ADIPOSE_TISSUE_ICRP"
d:Ge/Insert32/RMin = 0.0 cm
d:Ge/Insert32/RMax = 0.45 cm
d:Ge/Insert32/HL = 10. cm #3 mm long
d:Ge/Insert32/SPhi = 0. deg
d:Ge/Insert32/DPhi = 360. deg
d:Ge/Insert32/TransX = 0. cm
d:Ge/Insert32/TransY = 2.3397417613797677 cm
d:Ge/Insert32/TransZ = -0.8806863744009564 cm
d:Ge/Insert32/RotX = 0. deg
d:Ge/Insert32/RotY = 90. deg
d:Ge/Insert32/RotZ = 0. deg

s:Ge/Insert33/Type     = "TsCylinder"
s:Ge/Insert33/Parent = "InsertGroup"
b:Ge/Insert33/IsParallel = "True"
s:Ge/Insert33/ParallelWorldName = "Inserts"
s:Ge/Insert33/Material = "G4_ADIPOSE_TISSUE_ICRP"
d:Ge/Insert33/RMin = 0.0 cm
d:Ge/Insert33/RMax = 0.35 cm
d:Ge/Insert33/HL = 10. cm #3 mm long
d:Ge/Insert33/SPhi = 0. deg
d:Ge/Insert33/DPhi = 360. deg
d:Ge/Insert33/TransX = 0. cm
d:Ge/Insert33/TransY = 1.5145509870358418 cm
d:Ge/Insert33/TransZ = -1.989003596695782 cm
d:Ge/Insert33/RotX = 0. deg
d:Ge/Insert33/RotY = 90. deg
d:Ge/Insert33/RotZ = 0. deg

s:Ge/Insert34/Type     = "TsCylinder"
s:Ge/Insert34/Parent = "InsertGroup"
b:Ge/Insert34/IsParallel = "True"
s:Ge/Insert34/ParallelWorldName = "Inserts"
s:Ge/Insert34/Material = "G4_ADIPOSE_TISSUE_ICRP"
d:Ge/Insert34/RMin = 0.0 cm
d:Ge/Insert34/RMax = 0.25 cm
d:Ge/Insert34/HL = 10. cm #3 mm long
d:Ge/Insert34/SPhi = 0. deg
d:Ge/Insert34/DPhi = 360. deg
d:Ge/Insert34/TransX = 0. cm
d:Ge/Insert34/TransY = 0.6204398531016085 cm
d:Ge/Insert34/TransZ = -2.421787436725869 cm
d:Ge/Insert34/RotX = 0. deg
d:Ge/Insert34/RotY = 90. deg
d:Ge/Insert34/RotZ = 0. deg

s:Ge/Insert35/Type     = "TsCylinder"
s:Ge/Insert35/Parent = "InsertGroup"
b:Ge/Insert35/IsParallel = "True"
s:Ge/Insert35/ParallelWorldName = "Inserts"
s:Ge/Insert35/Material = "G4_ADIPOSE_TISSUE_ICRP"
d:Ge/Insert35/RMin = 0.0 cm
d:Ge/Insert35/RMax = 0.15 cm
d:Ge/Insert35/HL = 10. cm #3 mm long
d:Ge/Insert35/SPhi = 0. deg
d:Ge/Insert35/DPhi = 360. deg
d:Ge/Insert35/TransX = 0. cm
d:Ge/Insert35/TransY = 0.02699099249972772 cm
d:Ge/Insert35/TransZ = -2.499854293018671 cm
d:Ge/Insert35/RotX = 0. deg
d:Ge/Insert35/RotY = 90. deg
d:Ge/Insert35/RotZ = 0. deg

s:Ge/Insert37/Type     = "TsCylinder"
s:Ge/Insert37/Parent = "InsertGroup"
b:Ge/Insert37/IsParallel = "True"
s:Ge/Insert37/ParallelWorldName = "Inserts"
s:Ge/Insert37/Material = "G4_BRAIN_ICRP"
d:Ge/Insert37/RMin = 0.0 cm
d:Ge/Insert37/RMax = 0.45 cm
d:Ge/Insert37/HL = 10. cm #3 mm long
d:Ge/Insert37/SPhi = 0. deg
d:Ge/Insert37/DPhi = 360. deg
d:Ge/Insert37/TransX = 0. cm
d:Ge/Insert37/TransY = -1.9325676536879244 cm
d:Ge/Insert37/TransZ = -1.5859326164497503 cm
d:Ge/Insert37/RotX = 0. deg
d:Ge/Insert37/RotY = 90. deg
d:Ge/Insert37/RotZ = 0. deg

s:Ge/Insert38/Type     = "TsCylinder"
s:Ge/Insert38/Parent = "InsertGroup"
b:Ge/Insert38/IsParallel = "True"
s:Ge/Insert38/ParallelWorldName = "Inserts"
s:Ge/Insert38/Material = "G4_BRAIN_ICRP"
d:Ge/Insert38/RMin = 0.0 cm
d:Ge/Insert38/RMax = 0.35 cm
d:Ge/Insert38/HL = 10. cm #3 mm long
d:Ge/Insert38/SPhi = 0. deg
d:Ge/Insert38/DPhi = 360. deg
d:Ge/Insert38/TransX = 0. cm
d:Ge/Insert38/TransY = -2.479803136475086 cm
d:Ge/Insert38/TransZ = -0.3171378317519457 cm
d:Ge/Insert38/RotX = 0. deg
d:Ge/Insert38/RotY = 90. deg
d:Ge/Insert38/RotZ = 0. deg

s:Ge/Insert39/Type     = "TsCylinder"
s:Ge/Insert39/Parent = "InsertGroup"
b:Ge/Insert39/IsParallel = "True"
s:Ge/Insert39/ParallelWorldName = "Inserts"
s:Ge/Insert39/Material = "G4_BRAIN_ICRP"
d:Ge/Insert39/RMin = 0.0 cm
d:Ge/Insert39/RMax = 0.25 cm
d:Ge/Insert39/HL = 10. cm #3 mm long
d:Ge/Insert39/SPhi = 0. deg
d:Ge/Insert39/DPhi = 360. deg
d:Ge/Insert39/TransX = 0. cm
d:Ge/Insert39/TransY = -2.407549369321406 cm
d:Ge/Insert39/TransZ = 0.6735770440566556 cm
d:Ge/Insert39/RotX = 0. deg
d:Ge/Insert39/RotY = 90. deg
d:Ge/Insert39/RotZ = 0. deg

s:Ge/Insert40/Type     = "TsCylinder"
s:Ge/Insert40/Parent = "InsertGroup"
b:Ge/Insert40/IsParallel = "True"
s:Ge/Insert40/ParallelWorldName = "Inserts"
s:Ge/Insert40/Material = "G4_BRAIN_ICRP"
d:Ge/Insert40/RMin = 0.0 cm
d:Ge/Insert40/RMax = 0.15 cm
d:Ge/Insert40/HL = 10. cm #3 mm long
d:Ge/Insert40/SPhi = 0. deg
d:Ge/Insert40/DPhi = 360. deg
d:Ge/Insert40/TransX = 0. cm
d:Ge/Insert40/TransY = -2.1784328197636205 cm
d:Ge/Insert40/TransZ = 1.2265522613312165 cm
d:Ge/Insert40/RotX = 0. deg
d:Ge/Insert40/RotY = 90. deg
d:Ge/Insert40/RotZ = 0. deg

s:Ge/Insert42/Type     = "TsCylinder"
s:Ge/Insert42/Parent = "InsertGroup"
b:Ge/Insert42/IsParallel = "True"
s:Ge/Insert42/ParallelWorldName = "Inserts"
s:Ge/Insert42/Material = "G4_B-100_BONE"
d:Ge/Insert42/RMin = 0.0 cm
d:Ge/Insert42/RMax = 0.45 cm
d:Ge/Insert42/HL = 10. cm #3 mm long
d:Ge/Insert42/SPhi = 0. deg
d:Ge/Insert42/DPhi = 360. deg
d:Ge/Insert42/TransX = 0. cm
d:Ge/Insert42/TransY = -0.4071741076918434 cm
d:Ge/Insert42/TransZ = 2.466618990850705 cm
d:Ge/Insert42/RotX = 0. deg
d:Ge/Insert42/RotY = 90. deg
d:Ge/Insert42/RotZ = 0. deg

s:Ge/Insert43/Type     = "TsCylinder"
s:Ge/Insert43/Parent = "InsertGroup"
b:Ge/Insert43/IsParallel = "True"
s:Ge/Insert43/ParallelWorldName = "Inserts"
s:Ge/Insert43/Material = "G4_B-100_BONE"
d:Ge/Insert43/RMin = 0.0 cm
d:Ge/Insert43/RMax = 0.35 cm
d:Ge/Insert43/HL = 10. cm #3 mm long
d:Ge/Insert43/SPhi = 0. deg
d:Ge/Insert43/DPhi = 360. deg
d:Ge/Insert43/TransX = 0. cm
d:Ge/Insert43/TransY = 0.9652521494392434 cm
d:Ge/Insert43/TransZ = 2.3061414284477264 cm
d:Ge/Insert43/RotX = 0. deg
d:Ge/Insert43/RotY = 90. deg
d:Ge/Insert43/RotZ = 0. deg

s:Ge/Insert44/Type     = "TsCylinder"
s:Ge/Insert44/Parent = "InsertGroup"
b:Ge/Insert44/IsParallel = "True"
s:Ge/Insert44/ParallelWorldName = "Inserts"
s:Ge/Insert44/Material = "G4_B-100_BONE"
d:Ge/Insert44/RMin = 0.0 cm
d:Ge/Insert44/RMax = 0.25 cm
d:Ge/Insert44/HL = 10. cm #3 mm long
d:Ge/Insert44/SPhi = 0. deg
d:Ge/Insert44/DPhi = 360. deg
d:Ge/Insert44/TransX = 0. cm
d:Ge/Insert44/TransY = 1.787109516219797 cm
d:Ge/Insert44/TransZ = 1.7482103926692127 cm
d:Ge/Insert44/RotX = 0. deg
d:Ge/Insert44/RotY = 90. deg
d:Ge/Insert44/RotZ = 0. deg

s:Ge/Insert45/Type     = "TsCylinder"
s:Ge/Insert45/Parent = "InsertGroup"
b:Ge/Insert45/IsParallel = "True"
s:Ge/Insert45/ParallelWorldName = "Inserts"
s:Ge/Insert45/Material = "G4_B-100_BONE"
d:Ge/Insert45/RMin = 0.0 cm
d:Ge/Insert45/RMax = 0.15 cm
d:Ge/Insert45/HL = 10. cm #3 mm long
d:Ge/Insert45/SPhi = 0. deg
d:Ge/Insert45/DPhi = 360. deg
d:Ge/Insert45/TransX = 0. cm
d:Ge/Insert45/TransY = 2.151441827263892 cm
d:Ge/Insert45/TransZ = 1.273302031687456 cm
d:Ge/Insert45/RotX = 0. deg
d:Ge/Insert45/RotY = 90. deg
d:Ge/Insert45/RotZ = 0. deg
