s:Sc/EnergyDeposition_36/Component                 = "CWO_36"
s:Sc/EnergyDeposition_36/Quantity                  = "EnergyDeposit"
s:Sc/EnergyDeposition_36/OutputType                = "csv"
s:Sc/EnergyDeposition_36/IfOutputFileAlreadyExists = "Overwrite"
s:Sc/EnergyDeposition_36/OutputFile = "runs/EnergyDeposit_36"

s:Sc/EnergyDeposition_37/Component                 = "CWO_37"
s:Sc/EnergyDeposition_37/Quantity                  = "EnergyDeposit"
s:Sc/EnergyDeposition_37/OutputType                = "csv"
s:Sc/EnergyDeposition_37/IfOutputFileAlreadyExists = "Overwrite"
s:Sc/EnergyDeposition_37/OutputFile = "runs/EnergyDeposit_37"

s:Sc/EnergyDeposition_38/Component                 = "CWO_38"
s:Sc/EnergyDeposition_38/Quantity                  = "EnergyDeposit"
s:Sc/EnergyDeposition_38/OutputType                = "csv"
s:Sc/EnergyDeposition_38/IfOutputFileAlreadyExists = "Overwrite"
s:Sc/EnergyDeposition_38/OutputFile = "runs/EnergyDeposit_38"

s:Sc/EnergyDeposition_39/Component                 = "CWO_39"
s:Sc/EnergyDeposition_39/Quantity                  = "EnergyDeposit"
s:Sc/EnergyDeposition_39/OutputType                = "csv"
s:Sc/EnergyDeposition_39/IfOutputFileAlreadyExists = "Overwrite"
s:Sc/EnergyDeposition_39/OutputFile = "runs/EnergyDeposit_39"

s:Sc/EnergyDeposition_40/Component                 = "CWO_40"
s:Sc/EnergyDeposition_40/Quantity                  = "EnergyDeposit"
s:Sc/EnergyDeposition_40/OutputType                = "csv"
s:Sc/EnergyDeposition_40/IfOutputFileAlreadyExists = "Overwrite"
s:Sc/EnergyDeposition_40/OutputFile = "runs/EnergyDeposit_40"

s:Sc/EnergyDeposition_61/Component                 = "CWO_61"
s:Sc/EnergyDeposition_61/Quantity                  = "EnergyDeposit"
s:Sc/EnergyDeposition_61/OutputType                = "csv"
s:Sc/EnergyDeposition_61/IfOutputFileAlreadyExists = "Overwrite"
s:Sc/EnergyDeposition_61/OutputFile = "runs/EnergyDeposit_61"

s:Sc/EnergyDeposition_62/Component                 = "CWO_62"
s:Sc/EnergyDeposition_62/Quantity                  = "EnergyDeposit"
s:Sc/EnergyDeposition_62/OutputType                = "csv"
s:Sc/EnergyDeposition_62/IfOutputFileAlreadyExists = "Overwrite"
s:Sc/EnergyDeposition_62/OutputFile = "runs/EnergyDeposit_62"

s:Sc/EnergyDeposition_63/Component                 = "CWO_63"
s:Sc/EnergyDeposition_63/Quantity                  = "EnergyDeposit"
s:Sc/EnergyDeposition_63/OutputType                = "csv"
s:Sc/EnergyDeposition_63/IfOutputFileAlreadyExists = "Overwrite"
s:Sc/EnergyDeposition_63/OutputFile = "runs/EnergyDeposit_63"

s:Sc/EnergyDeposition_64/Component                 = "CWO_64"
s:Sc/EnergyDeposition_64/Quantity                  = "EnergyDeposit"
s:Sc/EnergyDeposition_64/OutputType                = "csv"
s:Sc/EnergyDeposition_64/IfOutputFileAlreadyExists = "Overwrite"
s:Sc/EnergyDeposition_64/OutputFile = "runs/EnergyDeposit_64"

s:Sc/EnergyDeposition_65/Component                 = "CWO_65"
s:Sc/EnergyDeposition_65/Quantity                  = "EnergyDeposit"
s:Sc/EnergyDeposition_65/OutputType                = "csv"
s:Sc/EnergyDeposition_65/IfOutputFileAlreadyExists = "Overwrite"
s:Sc/EnergyDeposition_65/OutputFile = "runs/EnergyDeposit_65"

