# ------------------------------------------------------------------ #
#  Main Script for Cu-GOS Scintillator pencil beam simulation
#  XCITE Tango2
#
#  Run -> topas Ge_CuGOS.txt
#
#  File Structure
#  -- > Ma_CuGOS.txt (Contains optical materials)
#
#  Output
#  -- > PhotodiodeReadout.phsp (Contains optical photons hitting AMFPI)
#
#  CHANGE == parameter that you might want to change 
# ------------------------------------------------------------------ #

includeFile                             = Ma_CuGOS.txt

i:Ts/SequenceVerbosity                  = 1
# b:Ts/UseQt                              = "True"
b:Gr/Enable                           = "False"


# SEQUENCE
b:Ts/ShowCPUTime                        = "True"
i:Ts/ShowHistoryCountAtInterval         = 10000
i:Ts/NumberOfThreads                    = -1

# VISUALIZATION
s:Gr/view/Type                          = "OpenGl"
i:Gr/view/WindowSizeX                   = 600
i:Gr/view/WindowSizeY                   = 600
d:Gr/view/Theta                         = 90. deg
d:Gr/view/Phi                           = 0. deg
u:Gr/view/Zoom                          = 30
s:Gr/view/CenterOn = "GOS_Glue"


# PHYSICS LIST
s:Ph/ListName                           = "Optical"
s:Ph/Optical/Type                       = "Geant4_Modular"
sv:Ph/Optical/Modules                   = 2 "g4optical" "g4em-lowep"
d:Ph/Optical/CutForAllParticles         = 0.005 mm 

# SOURCE (SIMPLE MONOENERGETIC)
s:So/PencilBeam/Type                                       = "Beam"
s:So/PencilBeam/Component                                  = "BeamPosition"
s:So/PencilBeam/BeamParticle                               = "gamma"
u:So/PencilBeam/BeamEnergySpread                           = 0.01

# ---- Point beam
s:So/PencilBeam/BeamPositionDistribution                   = "None"

# ---- PSF beam
# d:So/PencilBeam/BeamPositionSpreadX                        = 0.15 mm
# d:So/PencilBeam/BeamPositionSpreadY                        = 0.15 mm
# s:So/PencilBeam/BeamPositionDistribution                   = "Gaussian"
# s:So/PencilBeam/BeamPositionCutoffShape                    = "Ellipse"
# d:So/PencilBeam/BeamPositionCutoffX                        = 0.3 mm
# d:So/PencilBeam/BeamPositionCutoffY                        = 0.3 mm

# # ---- The MTF beam
# d:So/PencilBeam/BeamPositionCutoffX                        = 0.15 mm
# d:So/PencilBeam/BeamPositionCutoffY                        = 35 mm
# d:Ge/BeamPosition/RotZ                                     = 2.3 deg
# s:So/PencilBeam/BeamPositionDistribution                   = "Flat"
# s:So/PencilBeam/BeamPositionCutoffShape                    = "Rectangle"

s:So/PencilBeam/BeamAngularDistribution                    = "None"
i:So/PencilBeam/NumberOfHistoriesInRun                     = 1000000 # Uppped this by 10      # CHANGE

# W_spectrum_6.txt
# s:So/PencilBeam/BeamEnergySpectrumType       = "Continuous"
# dv:So/PencilBeam/BeamEnergySpectrumValues = 200 0.015 0.045 0.075 0.105 0.135 0.165 0.195 0.225 0.255 0.285 0.315 0.345 0.375 0.405 0.435 0.465 0.495 0.525 0.555 0.585 0.615 0.645 0.675 0.705 0.735 0.765 0.795 0.825 0.855 0.885 0.915 0.945 0.975 1.005 1.035 1.065 1.095 1.125 1.155 1.185 1.215 1.245 1.275 1.305 1.335 1.365 1.395 1.425 1.455 1.485 1.515 1.545 1.575 1.605 1.635 1.665 1.695 1.725 1.755 1.785 1.815 1.845 1.875 1.905 1.935 1.965 1.995 2.025 2.055 2.085 2.115 2.145 2.175 2.205 2.235 2.265 2.295 2.325 2.355 2.385 2.415 2.445 2.475 2.505 2.535 2.565 2.595 2.625 2.655 2.685 2.715 2.745 2.775 2.805 2.835 2.865 2.895 2.925 2.955 2.985 3.015 3.045 3.075 3.105 3.135 3.165 3.195 3.225 3.255 3.285 3.315 3.345 3.375 3.405 3.435 3.465 3.495 3.525 3.555 3.585 3.615 3.645 3.675 3.705 3.735 3.765 3.795 3.825 3.855 3.885 3.915 3.945 3.975 4.005 4.035 4.065 4.095 4.125 4.155 4.185 4.215 4.245 4.275 4.305 4.335 4.365 4.395 4.425 4.455 4.485 4.515 4.545 4.575 4.605 4.635 4.665 4.695 4.725 4.755 4.785 4.815 4.845 4.875 4.905 4.935 4.965 4.995 5.025 5.055 5.085 5.115 5.145 5.175 5.205 5.235 5.265 5.295 5.325 5.355 5.385 5.415 5.445 5.475 5.505 5.535 5.565 5.595 5.625 5.655 5.685 5.715 5.745 5.775 5.805 5.835 5.865 5.895 5.925 5.955 5.985 MeV
# uv:So/PencilBeam/BeamEnergySpectrumWeights = 200 2.2262865210080333e-05 7.51092193361817e-05 0.00020166596944515869 0.0009358167568905561 0.001548357963127378 0.0014901719949593573 0.0017952322815272112 0.0027990385706452986 0.00498287323864255 0.007984458284023537 0.010987253645955082 0.013957067881883951 0.016386475777989188 0.018058830671721118 0.019692152856697585 0.020213194131712308 0.020552082765868226 0.02464658365640205 0.020591418053761322 0.020318491671610754 0.01989306540409002 0.01939048145647129 0.019086086844006242 0.01849999105439909 0.018179257168501523 0.017733558098758963 0.01731539373054157 0.016410682109000325 0.01605908515106356 0.015619135084936148 0.015042721827733446 0.014651789581903584 0.014331358275143658 0.013983089687720924 0.013552519574860325 0.013215143836392603 0.012760367392520866 0.012375789308581428 0.012011181447726177 0.01159574029174754 0.011348533136296302 0.011078935124659763 0.01054972421292878 0.010528846252431676 0.010076187862523412 0.009743955969395557 0.00952458609460713 0.00939356932800935 0.0089209407150169 0.008820181862183042 0.008669497451638714 0.00842924961635318 0.008292786425277896 0.007920311506844024 0.007572950656834209 0.007605024045423966 0.007324835763970055 0.007093967881951336 0.007042832007690309 0.006948729895884513 0.006701522740433277 0.006595620042259553 0.006307867282364662 0.006105744418421668 0.006109677947210977 0.006060054968638147 0.005733269499987797 0.005640377704732559 0.0054918113481517055 0.005548998805165517 0.00524430161356283 0.005222818494790446 0.004979544868128519 0.004885140177185085 0.004860933846173947 0.0046464052375877465 0.004622198906576609 0.004426430204524039 0.004433994682965019 0.004414629618156109 0.004221584128342292 0.004152596084960551 0.004033077325593062 0.004037010854382373 0.003995254933388161 0.0037828443787654336 0.003884510969012209 0.0038034197601249002 0.003647591504240706 0.003650617295617098 0.0034605975971796726 0.0034436531654718767 0.00339645082000016 0.003279050114596145 0.0032857068556242076 0.0030981077902878964 0.003087517520470524 0.002990480391029628 0.00303910485844825 0.0029012195454260607 0.0027991293443865905 0.0029186783616678433 0.0028262404351190634 0.002683634887549703 0.002625297629812863 0.002670139858010994 0.0024855968419648386 0.002440845387507999 0.0024040215064573068 0.00241361326512047 0.00235821102501873 0.002341690204103629 0.0022465895811436248 0.0023445949638249653 0.002231067271382733 0.0021581456992116827 0.0021310043505654453 0.0021619884542597007 0.002091094162310833 0.002019261875035284 0.002119324795852572 0.002033785673641966 0.0019230417092660147 0.0018745685314162128 0.0018725109932802662 0.001831814099267792 0.0018171692690060544 0.0017617670289043145 0.0017831593739354068 0.0017045190560629755 0.001680161435483019 0.0016151069208905882 0.001643246780691035 0.0016219754673149984 0.0015470266149217654 0.001503424961187955 0.0014800053359346798 0.0014615782664524517 0.0014878421355995354 0.001371228135953383 0.0013790346777044745 0.0013848744550609114 0.0012945545824756064 0.0012654162115209504 0.0012817857428672316 0.0012128279573992552 0.0012099837135054468 0.0012158234908618835 0.0011856866087530179 0.0011205413204192953 0.0011079540282935042 0.0010943682250135033 0.001082658412386866 0.0010438375090277552 0.001049647028470428 0.0010593295608748827 0.0009495841076531403 0.0009641381641735865 0.0009436838144691758 0.0009077374129176372 0.00093206477558383 0.0009058009064367463 0.0008445891468923337 0.0008338778454199055 0.0007853441517425759 0.000831003343612333 0.000764920059951929 0.0007746025923563839 0.0007347831778430635 0.0007493372343635096 0.0007143590860524166 0.0006463695538248856 0.0006735411603848868 0.0006560823441431043 0.0006045531170031465 0.0005890005493284909 0.0005957783220116093 0.0005705432219324989 0.0005180457415520956 0.0004995884141561036 0.00046654677232590167 0.0004626435014503558 0.0004344733837361451 0.00040627300810817057 0.0004247605934179264 0.00037907114363440534 0.0003936554580686154 0.0003285404276486569 0.0003187973794166742 0.0002595221263531525 0.00027994319235242294 0.00022939734740979253 0.00020801105396145298 0.00019926046530092695 0.00017981975570760756 0.0001555226509551788 0.00013997310907189967 0.00010594808504437024 7.387469645461371e-05 3.9852698218460666e-05

# GEOMETRY
d:Ge/World/HLX                          = 7.5 cm
d:Ge/World/HLY                          = 7.5 cm
d:Ge/World/HLZ                          = 7.5 cm
s:Ge/World/Material                     = "Air"

dc:Ge/Plastic_Housing/HLX               = 7.5 cm
dc:Ge/Plastic_Housing/HLY               = 7.5 cm
dc:Ge/Plastic_Housing/HLZ               = 0.8 mm
sc:Ge/Plastic_Housing/Material          = "Epoxy"
dc:Ge/Plastic_Housing/RotX              = 0. deg
dc:Ge/Plastic_Housing/RotY              = 0. deg
dc:Ge/Plastic_Housing/RotZ              = 0. deg
dc:Ge/Plastic_Housing/TransX            = 0. mm
dc:Ge/Plastic_Housing/TransY            = 0. mm
dc:Ge/Plastic_Housing/TransZ            = 0. mm
sc:Ge/Plastic_Housing/Color             = "silver"
s:Ge/Plastic_Housing/Type               = "TsBox"
sc:Ge/Plastic_Housing/DrawingStyle      = "Solid"
s:Ge/Plastic_Housing/Parent             = "World"

dc:Ge/PCB_Board/HLX                     = Ge/Plastic_Housing/HLX mm
dc:Ge/PCB_Board/HLY                     = Ge/Plastic_Housing/HLY mm
dc:Ge/PCB_Board/HLZ                     = 0.25 mm
sc:Ge/PCB_Board/Material                = "PCB_Board"
d:Ge/PCB_Board/TransZ1                  = Ge/Plastic_Housing/TransZ - Ge/Plastic_Housing/HLZ mm
d:Ge/PCB_Board/TransZ2                  = Ge/PCB_Board/TransZ1 - 8 mm
dc:Ge/PCB_Board/TransZ                  = Ge/PCB_Board/TransZ2 - Ge/PCB_Board/HLZ mm
s:Ge/PCB_Board/Type                     = "TsBox"
sc:Ge/PCB_Board/DrawingStyle            = "Solid"
s:Ge/PCB_Board/Parent                   = "World"

dc:Ge/Rohacell_Foam/HLX                 = Ge/Plastic_Housing/HLX mm
dc:Ge/Rohacell_Foam/HLY                 = Ge/Plastic_Housing/HLY mm
dc:Ge/Rohacell_Foam/HLZ                 = 4 mm
sc:Ge/Rohacell_Foam/Material            = "Rohacell"
d:Ge/Rohacell_Foam/TransZ1              = Ge/PCB_Board/TransZ - Ge/PCB_Board/HLZ mm
dc:Ge/Rohacell_Foam/TransZ              = Ge/Rohacell_Foam/TransZ1 - Ge/Rohacell_Foam/HLZ mm
s:Ge/Rohacell_Foam/Type                 = "TsBox"
sc:Ge/Rohacell_Foam/DrawingStyle        = "Solid"
s:Ge/Rohacell_Foam/Parent               = "World"

dc:Ge/PCB_Board_2/HLX                   = Ge/Plastic_Housing/HLX mm
dc:Ge/PCB_Board_2/HLY                   = Ge/Plastic_Housing/HLY mm
dc:Ge/PCB_Board_2/HLZ                   = 0.25 mm
sc:Ge/PCB_Board_2/Material              = "PCB_Board"
d:Ge/PCB_Board_2/TransZ1                = Ge/Rohacell_Foam/TransZ - Ge/Rohacell_Foam/HLZ mm
dc:Ge/PCB_Board_2/TransZ                = Ge/PCB_Board_2/TransZ1 - Ge/PCB_Board_2/HLZ mm
s:Ge/PCB_Board_2/Type                   = "TsBox"
sc:Ge/PCB_Board_2/DrawingStyle          = "Solid"
s:Ge/PCB_Board_2/Parent                 = "World"

dc:Ge/Compression_Foam/HLX              = Ge/Plastic_Housing/HLX mm
dc:Ge/Compression_Foam/HLY              = Ge/Plastic_Housing/HLY mm
dc:Ge/Compression_Foam/HLZ              = 1.05 mm
sc:Ge/Compression_Foam/Material         = "Compression_Foam"
d:Ge/Compression_Foam/TransZ1           = Ge/PCB_Board_2/TransZ - Ge/PCB_Board_2/HLZ mm
dc:Ge/Compression_Foam/TransZ           = Ge/Compression_Foam/TransZ1 - Ge/Compression_Foam/HLZ mm
s:Ge/Compression_Foam/Type              = "TsBox"
sc:Ge/Compression_Foam/DrawingStyle     = "Solid"
s:Ge/Compression_Foam/Parent            = "World"

dc:Ge/Cu_Build_Up/HLX                   = Ge/Plastic_Housing/HLX mm
dc:Ge/Cu_Build_Up/HLY                   = Ge/Plastic_Housing/HLY mm
dc:Ge/Cu_Build_Up/HLZ                   = 0.5 mm
sc:Ge/Cu_Build_Up/Material              = "Cu_Build_Up"
d:Ge/Cu_Build_Up/TransZ1                = Ge/Compression_Foam/TransZ - Ge/Compression_Foam/HLZ mm
dc:Ge/Cu_Build_Up/TransZ                = Ge/Cu_Build_Up/TransZ1 - Ge/Cu_Build_Up/HLZ mm
s:Ge/Cu_Build_Up/Type                   = "TsBox"
sc:Ge/Cu_Build_Up/DrawingStyle          = "Solid"
s:Ge/Cu_Build_Up/Parent                 = "World"

dc:Ge/White_Plastic/HLX                 = Ge/Plastic_Housing/HLX mm
dc:Ge/White_Plastic/HLY                 = Ge/Plastic_Housing/HLY mm
dc:Ge/White_Plastic/HLZ                 = 0.09 mm
sc:Ge/White_Plastic/Material            = "White_Plastic"
d:Ge/White_Plastic/TransZ1              = Ge/Cu_Build_Up/TransZ - Ge/Cu_Build_Up/HLZ mm
dc:Ge/White_Plastic/TransZ              = Ge/White_Plastic/TransZ1 - Ge/White_Plastic/HLZ mm
s:Ge/White_Plastic/Type                 = "TsBox"
sc:Ge/White_Plastic/DrawingStyle        = "Solid"
s:Ge/White_Plastic/Parent               = "World"

s:Ge/GOS_Glue/OpticalBehaviorTo/White_Plastic = "MySurface1"
# s:Ge/White_Plastic/OpticalBehaviorTo/GOS_Glue = "MySurface2"

dv:Su/MySurface1/Reflectivity/Energies = 3 1.0 4.0 7.0 eV
uv:Su/MySurface1/Reflectivity/Values = 3 0.88 0.88 0.88
dv:Su/MySurface1/Efficiency/Energies   = 2 1.6 7.2 eV
uv:Su/MySurface1/Efficiency/Values     = 2 1.0 1.0
s:Su/MySurface1/Type = "dielectric_metal"
s:Su/MySurface1/Model = "Glisur"
s:Su/MySurface1/Finish = "Polished"

# dv:Su/MySurface2/Reflectivity/Energies = 3 1.0 4.0 7.0 eV
# uv:Su/MySurface2/Reflectivity/Values = 3 0.88 0.88 0.88 
# dv:Su/MySurface2/Efficiency/Energies   = 2 1.6 7.2 eV
# uv:Su/MySurface2/Efficiency/Values     = 2 1.0 1.0
# s:Su/MySurface2/Type = "dielectric_dielectric"
# s:Su/MySurface2/Model = "Glisur"
# s:Su/MySurface2/Finish = "Polished"


# GOS glue means a mixture of GOS and glue and is the scintillator
dc:Ge/GOS_Glue/HLX                      = Ge/Plastic_Housing/HLX mm
dc:Ge/GOS_Glue/HLY                      = Ge/Plastic_Housing/HLY mm
dc:Ge/GOS_Glue/HLZ                      = 0.145 mm
sc:Ge/GOS_Glue/Material                 = "GOS_Glue"
d:Ge/GOS_Glue/TransZ1                   = Ge/White_Plastic/TransZ - Ge/White_Plastic/HLZ mm
dc:Ge/GOS_Glue/TransZ                   = Ge/GOS_Glue/TransZ1 - Ge/GOS_Glue/HLZ mm
s:Ge/GOS_Glue/Type                      = "TsBox"
sc:Ge/GOS_Glue/DrawingStyle             = "Solid"
s:Ge/GOS_Glue/Parent                    = "World"

dc:Ge/Epoxy_Optical/HLX                 = Ge/Plastic_Housing/HLX mm
dc:Ge/Epoxy_Optical/HLY                 = Ge/Plastic_Housing/HLY mm
dc:Ge/Epoxy_Optical/HLZ                 = 0.0375 mm
sc:Ge/Epoxy_Optical/Material            = "Epoxy_Optical"
d:Ge/Epoxy_Optical/TransZ1              = Ge/GOS_Glue/TransZ - Ge/GOS_Glue/HLZ mm
dc:Ge/Epoxy_Optical/TransZ              = Ge/Epoxy_Optical/TransZ1 - Ge/Epoxy_Optical/HLZ mm
s:Ge/Epoxy_Optical/Type                 = "TsBox"
sc:Ge/Epoxy_Optical/DrawingStyle        = "Solid"
s:Ge/Epoxy_Optical/Parent               = "World"

dc:Ge/Photodiode_Readout/HLX            = Ge/Plastic_Housing/HLX mm
dc:Ge/Photodiode_Readout/HLY            = Ge/Plastic_Housing/HLY mm
dc:Ge/Photodiode_Readout/HLZ            = 0.5 mm
sc:Ge/Photodiode_Readout/Material       = "Silicon_Dioxide"
d:Ge/Photodiode_Readout/TransZ1         = Ge/Epoxy_Optical/TransZ - Ge/Epoxy_Optical/HLZ mm
dc:Ge/Photodiode_Readout/TransZ         = Ge/Photodiode_Readout/TransZ1 - Ge/Photodiode_Readout/HLZ mm
s:Ge/Photodiode_Readout/Type            = "TsBox"
sc:Ge/Photodiode_Readout/DrawingStyle   = "Solid"
s:Ge/Photodiode_Readout/Parent          = "World"
s:Ge/Photodiode_Readout/OpticalBehavior = "SurfaceDetector"

dc:Ge/PCB_Board_3/HLX                   = Ge/Plastic_Housing/HLX mm
dc:Ge/PCB_Board_3/HLY                   = Ge/Plastic_Housing/HLY mm
dc:Ge/PCB_Board_3/HLZ                   = 0.25 mm
sc:Ge/PCB_Board_3/Material              = "PCB_Board"
d:Ge/PCB_Board_3/TransZ1                = Ge/Photodiode_Readout/TransZ - Ge/Photodiode_Readout/HLZ mm
dc:Ge/PCB_Board_3/TransZ                = Ge/PCB_Board_3/TransZ1 - Ge/PCB_Board_3/HLZ mm
s:Ge/PCB_Board_3/Type                   = "TsBox"
sc:Ge/PCB_Board_3/DrawingStyle          = "Solid"
s:Ge/PCB_Board_3/Parent                 = "World"

dc:Ge/Rohacell_Foam_2/HLX               = Ge/Plastic_Housing/HLX mm
dc:Ge/Rohacell_Foam_2/HLY               = Ge/Plastic_Housing/HLY mm
dc:Ge/Rohacell_Foam_2/HLZ               = 4. mm
sc:Ge/Rohacell_Foam_2/Material          = "Rohacell"
d:Ge/Rohacell_Foam_2/TransZ1            = Ge/PCB_Board_3/TransZ - Ge/PCB_Board_3/HLZ mm
dc:Ge/Rohacell_Foam_2/TransZ            = Ge/Rohacell_Foam_2/TransZ1 - Ge/Rohacell_Foam_2/HLZ mm
s:Ge/Rohacell_Foam_2/Type               = "TsBox"
sc:Ge/Rohacell_Foam_2/DrawingStyle      = "Solid"
s:Ge/Rohacell_Foam_2/Parent             = "World"

dc:Ge/PCB_Board_4/HLX                   = Ge/Plastic_Housing/HLX mm
dc:Ge/PCB_Board_4/HLY                   = Ge/Plastic_Housing/HLY mm
dc:Ge/PCB_Board_4/HLZ                   = 0.25 mm
sc:Ge/PCB_Board_4/Material              = "PCB_Board"
d:Ge/PCB_Board_4/TransZ1                = Ge/Rohacell_Foam_2/TransZ - Ge/Rohacell_Foam_2/HLZ mm
dc:Ge/PCB_Board_4/TransZ                = Ge/PCB_Board_4/TransZ1 - Ge/PCB_Board_4/HLZ mm
s:Ge/PCB_Board_4/Type                   = "TsBox"
sc:Ge/PCB_Board_4/DrawingStyle          = "Solid"
s:Ge/PCB_Board_4/Parent                 = "World"

dc:Ge/Water/HLX                         = Ge/Plastic_Housing/HLX mm
dc:Ge/Water/HLY                         = Ge/Plastic_Housing/HLY mm
dc:Ge/Water/HLZ                         = 5. mm
sc:Ge/Water/Material                    = "G4_WATER"
d:Ge/Water/TransZ1                      = Ge/Rohacell_Foam_2/TransZ - Ge/Rohacell_Foam_2/HLZ mm
d:Ge/Water/TransZ2                      = Ge/Water/TransZ1 - 2.5 mm
dc:Ge/Water/TransZ                      = Ge/Water/TransZ2 - Ge/Water/HLZ mm
s:Ge/Water/Type                         = "TsBox"
s:Ge/Water/Color                        = "blue"
sc:Ge/Water/DrawingStyle                = "Solid"
s:Ge/Water/Parent                       = "World"

# ------------------- SCORER --------------------------

# The scorer is attached to the PMT, but only those
# photons that arrives to the surface of the photocathode
# are collected (with 20% probability, see surface setup)

s:Sc/Readout/Quantity = "OpticalPhotonCount"
s:Sc/Readout/Component = "Photodiode_Readout"
# s:Sc/Readout/OutputFile = "PhotodiodeSurface"
s:Sc/Readout/OutputType = "Binary"
i:Sc/Readout/BounceLimit = 100000000
s:Sc/Readout/IfOutputFileAlreadyExists = "Overwrite"

# # Surface used to detect optical photons
s:Su/SurfaceDetector/Type                = "dielectric_metal"
s:Su/SurfaceDetector/Finish              = "polished"
s:Su/SurfaceDetector/Model               = "unified"
dv:Su/SurfaceDetector/Efficiency/Energies   = 2 1.6 7.2 eV
uv:Su/SurfaceDetector/Efficiency/Values     = 2 1.0 1.0
dv:Su/SurfaceDetector/Reflectivity/Energies = 2 1.6 4.2 eV
uv:Su/SurfaceDetector/Reflectivity/Values   = 2 0.0 0.0

# SCORER (Energy Deposition)
s:Sc/EnergyDeposition/Component                 = "GOS_Glue"
s:Sc/EnergyDeposition/Quantity                  = "EnergyDeposit"
s:Sc/EnergyDeposition/OutputType                = "csv"
s:Sc/EnergyDeposition/IfOutputFileAlreadyExists = "Overwrite"


# These must be last lines three lines for bash script to replace!!
# d:So/PencilBeam/BeamEnergy = 6000 keV
s:Sc/Readout/OutputFile = "runs/bar_W_high_res"
s:Sc/EnergyDeposition/OutputFile = "runs/bar_w_high_res_edep"
