# b:Ts/UseQt                                             = "True"
b:Gr/Enable                                              = "False"                # CHANGE
i:Ts/SequenceVerbosity                                   = 1
b:Ts/ShowCPUTime                                         = "True"

# includeFile                                            = inserts.txt
includeFile                                              = GOS_detector.txt
includeFile                                              = Ma_CuGOS.txt
includeFile                                              = Ma_Catphan_404.txt

# RTrap - Right Angular Wedge Trapezoid
s:Ge/DemoRTrap/Type                                      = "G4RTrap"
s:Ge/DemoRTrap/Parent                                    = "World"
s:Ge/DemoRTrap/Material                                  = "G4_W"
dc:Ge/DemoRTrap/TransX                                   = -19.06 cm
dc:Ge/DemoRTrap/TransY                                   = 0 cm
dc:Ge/DemoRTrap/TransZ                                   = -33.5 cm
dc:Ge/DemoRTrap/RotX                                     = 90 deg
dc:Ge/DemoRTrap/RotY                                     = 0 deg
dc:Ge/DemoRTrap/RotZ                                     = 0 deg
dc:Ge/DemoRTrap/LZ                                       = 30 cm
dc:Ge/DemoRTrap/LY                                       = 9. cm
dc:Ge/DemoRTrap/LX                                       = 30. cm
dc:Ge/DemoRTrap/LTX                                      = 28.74 cm
s:Ge/DemoRTrap/Color                                     = "pink"

# RTrap - Right Angular Wedge Trapezoid
s:Ge/DemoRTrap2/Type                                     = "G4RTrap"
s:Ge/DemoRTrap2/Parent                                   = "World"
s:Ge/DemoRTrap2/Material                                 = "G4_W"
dc:Ge/DemoRTrap2/TransX                                  = 19.06 cm
dc:Ge/DemoRTrap2/TransY                                  = 0 cm
dc:Ge/DemoRTrap2/TransZ                                  = -33.5 cm
dc:Ge/DemoRTrap2/RotX                                    = 90 deg
dc:Ge/DemoRTrap2/RotY                                    = 180 deg
dc:Ge/DemoRTrap2/RotZ                                    = 0 deg
dc:Ge/DemoRTrap2/LZ                                      = 30 cm
dc:Ge/DemoRTrap2/LY                                      = 9. cm
dc:Ge/DemoRTrap2/LX                                      = 30. cm
dc:Ge/DemoRTrap2/LTX                                     = 28.74 cm
s:Ge/DemoRTrap2/Color                                    = "pink"

# RTrap - Right Angular Wedge Trapezoid
s:Ge/DemoRTrap3/Type                                     = "G4RTrap"
s:Ge/DemoRTrap3/Parent                                   = "World"
s:Ge/DemoRTrap3/Material                                 = "G4_W"
dc:Ge/DemoRTrap3/TransX                                  = 0 cm
dc:Ge/DemoRTrap3/TransY                                  = 20.39 cm
dc:Ge/DemoRTrap3/TransZ                                  = -42.9 cm
dc:Ge/DemoRTrap3/RotX                                    = 90 deg
dc:Ge/DemoRTrap3/RotY                                    = -90 deg
dc:Ge/DemoRTrap3/RotZ                                    = 0 deg
dc:Ge/DemoRTrap3/LZ                                      = 30 cm
dc:Ge/DemoRTrap3/LY                                      = 8.8 cm
dc:Ge/DemoRTrap3/LX                                      = 30. cm
dc:Ge/DemoRTrap3/LTX                                     = 28.768 cm
s:Ge/DemoRTrap3/Color                                    = "pink"

# RTrap - Right Angular Wedge Trapezoid
s:Ge/DemoRTrap4/Type                                     = "G4RTrap"
s:Ge/DemoRTrap4/Parent                                   = "World"
s:Ge/DemoRTrap4/Material                                 = "G4_W"
dc:Ge/DemoRTrap4/TransX                                  = 0 cm
dc:Ge/DemoRTrap4/TransY                                  = -20.39 cm
dc:Ge/DemoRTrap4/TransZ                                  = -42.9 cm
dc:Ge/DemoRTrap4/RotX                                    = 90 deg
dc:Ge/DemoRTrap4/RotY                                    = 90 deg
dc:Ge/DemoRTrap4/RotZ                                    = 0 deg
dc:Ge/DemoRTrap4/LZ                                      = 30 cm
dc:Ge/DemoRTrap4/LY                                      = 8.8 cm
dc:Ge/DemoRTrap4/LX                                      = 30. cm
dc:Ge/DemoRTrap4/LTX                                     = 28.768 cm
s:Ge/DemoRTrap4/Color                                    = "pink"

# b:Ts/PauseBeforeQuit                                   = "True"
i:Ts/NumberOfThreads                                     = -1

# sv:Ph/Default/LayeredMassGeometryWorlds                = 1 "Inserts"

s:Ge/World/Material                                      = "Vacuum"
d:Ge/World/HLX                                           = 1. m
d:Ge/World/HLY                                           = 1. m
d:Ge/World/HLZ                                           = 2. m

s:Gr/ViewA/Type                                          = "OpenGL"
d:Gr/ViewA/Theta                                         = 45. deg
d:Gr/ViewA/Phi                                           = 45. deg
s:Gr/ViewA/CenterOn                                      = "GOS_Glue"

u:So/Example/BeamEnergySpread                            = 0.001
i:Ts/ShowHistoryCountAtInterval                          = 1000000


s:So/Example/Type                                        = "PhaseSpace"
# s:So/MySource/Component                                = "World" # coordinate system of phase space. Usually "World"
s:So/Example/PhaseSpaceFileName                          = "Varian_TrueBeam6MV_01"
s:So/Example/Component                                   = "World"
b:So/Example/LimitedAssumePhotonIsNewHistory             = "true"
# JO 2020
i:So/Example/PhaseSpaceMultipleUse                       = 0
i:So/Example/NumberOfHistoriesInRun                      = 1000000000
#i:So/Example/PhaseSpaceBufferSize                       = 100
b:So/Example/PhaseSpaceIncludeEmptyHistories             = "False"
b:So/Example/PhaseSpaceInvertZAxis                       = "True"
# b:So/Example/PhaseSpaceInvertXAxis                     = "False"
# b:So/Example/PhaseSpaceInvertYAxis                     = "True"

# dc:Ge/BeamPosition/TransX                              = -0.2 m
# dc:Ge/BeamPosition/TransY                              = 0. m
# dc:Ge/BeamPosition/TransZ                              = 0. m
# dc:Ge/BeamPosition/RotX                                = 180. deg
# dc:Ge/BeamPosition/RotY                                = 0. deg
# dc:Ge/BeamPosition/RotZ                                = 0. deg

# s:Sc/Readout_gos_sec/Component                         = "GOS_Glue"
# s:Sc/Readout_gos_sec/Quantity                          = "EnergyDeposit"
# s:Sc/Readout_gos_sec/OutputType                        = ""
# # i:Sc/Readout_gos4/BounceLimit                        = 400000000
# # s:Sc/Readout_gos_sec/SplitByTimeFeature              = "beam_energy"
# s:Sc/Readout_gos_sec/IfOutputFileAlreadyExists         = "Overwrite"
# i:Sc/Readout_gos_sec/XBins                             = 128
# i:Sc/Readout_gos_sec/YBins                             = 512


s:Sc/Readout_Varian_w_jaws_air/Component                 = "GOS_Glue"
s:Sc/Readout_Varian_w_jaws_air/Quantity                  = "EnergyDeposit"
s:Sc/Readout_Varian_w_jaws_air/OutputType                = "csv"
# i:Sc/Readout_gos4/BounceLimit                          = 400000000
# s:Sc/Readout_gos_filt/SplitByTimeFeature               = "beam_energy"
s:Sc/Readout_Varian_w_jaws_air/IfOutputFileAlreadyExists = "Overwrite"
i:Sc/Readout_Varian_w_jaws_air/XBins                     = 256
i:Sc/Readout_Varian_w_jaws_air/YBins                     = 512

# i:Sc/Readout_gos_ebin/EBins                            = 20 # defaults to 1, that is, un-binned
# d:Sc/Readout_gos_ebin/EBinMin                          = 0. MeV # defaults to zero
# d:Sc/Readout_gos_ebin/EBinMax                          = 6. MeV # must be specified if EBins is greater than 1
i:Ts/seed                                                = 37156

# s:Sc/EnergyDeposition/Component                        = "GOS_Glue"
# s:Sc/EnergyDeposition/Quantity                         = "EnergyDeposit"
# s:Sc/EnergyDeposition/OutputType                       = "csv"
# s:Sc/EnergyDeposition/IfOutputFileAlreadyExists        = "Overwrite"
# s:Sc/EnergyDeposition/SplitByTimeFeature               = "beam_energy"

# s:Ge/ScoringCylinder/Type                              = "TsCylinder"
# s:Ge/ScoringCylinder/Parent                            = "World"
# s:Ge/ScoringCylinder/Material                          = "G4_WATER"
# d:Ge/ScoringCylinder/RMin                              = 0. cm
# d:Ge/ScoringCylinder/RMax                              = 10. cm
# d:Ge/ScoringCylinder/HL                                = 10. cm
# d:Ge/ScoringCylinder/SPhi                              = 0. deg
# d:Ge/ScoringCylinder/DPhi                              = 360. deg
# d:Ge/ScoringCylinder/RotX                              = 0. deg
# d:Ge/ScoringCylinder/RotY                              = 90. deg
# d:Ge/ScoringCylinder/RotZ                              = 0. deg
# d:Ge/ScoringCylinder/TransZ                            = -1. m
# W_spectrum_6.txt
# s:So/Example/BeamEnergySpectrumType                    = "Continuous"
# dv:So/Example/BeamEnergySpectrumValues                 = 200 0.015 0.045 0.075 0.105 0.135 0.165 0.195 0.225 0.255 0.285 0.315 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5.985 MeV
# uv:So/Example/BeamEnergySpectrumWeights                = 200 2.2262865210080333e-05 7.51092193361817e-05 0.00020166596944515869 0.0009358167568905561 0.001548357963127378 0.0014901719949593573 0.0017952322815272112 0.0027990385706452986 0.00498287323864255 0.007984458284023537 0.010987253645955082 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3.9852698218460666e-05

# d:Tf/TimelineEnd                                       = 19. ms
# i:Tf/NumberOfSequentialTimes                           = 18
# s:Tf/beam_energy/Function                              = "Step"
# dv:Tf/beam_energy/Times                                = 18 1 2 3 4 5 6 7 8 9 10 11 12 13 14 15 16 17 18 ms
# dv:Tf/beam_energy/Values                               = 18 10 20 30 40 50 60 70 80 90 100 300 500 700 900 1000 2000 4000 6000 keV
# d:So/Example/BeamEnergy                                = Tf/beam_energy/Value keV