
s:Ge/InsertGroup/Type="Group"
s:Ge/InsertGroup/Parent = "World"
d:Ge/InsertGroup/TransX=0. m
d:Ge/InsertGroup/TransY=0. m
d:Ge/InsertGroup/TransZ=-1. m
d:Ge/InsertGroup/RotX=0. deg
d:Ge/InsertGroup/RotY=0. deg


# d:Tf/TimelineEnd = 360. ms
# i:Tf/NumberOfSequentialTimes = 360
# s:Tf/beam_energy/Function = "Step"
# dv:Tf/beam_energy/Times = 360 1 2 3 4 5 6 7 8 9 10 11 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360 ms
# dv:Tf/beam_energy/Values = 360 1 2 3 4 5 6 7 8 9 10 11 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360 deg


s:Ge/Insert2/Type     = "TsCylinder"
s:Ge/Insert2/Parent = "InsertGroup"
b:Ge/Insert2/IsParallel = "True"
s:Ge/Insert2/ParallelWorldName = "Inserts"
s:Ge/Insert2/Material = "CATPHAN_B20"
d:Ge/Insert2/RMin = 0.0 cm
d:Ge/Insert2/RMax = 0.6 cm
d:Ge/Insert2/HL = 10. cm #3 mm long
d:Ge/Insert2/SPhi = 0. deg
d:Ge/Insert2/DPhi = 360. deg
d:Ge/Insert2/TransX = 0. cm
d:Ge/Insert2/TransY = 2.875 cm
d:Ge/Insert2/TransZ = -4.979646 cm
d:Ge/Insert2/RotX = 0. deg
d:Ge/Insert2/RotY = 90. deg
d:Ge/Insert2/RotZ = 0. deg

s:Ge/Insert3/Type     = "TsCylinder"
s:Ge/Insert3/Parent = "InsertGroup"
b:Ge/Insert3/IsParallel = "True"
s:Ge/Insert3/ParallelWorldName = "Inserts"
s:Ge/Insert3/Material = "CATPHAN_Delrin"
d:Ge/Insert3/RMin = 0.0 cm
d:Ge/Insert3/RMax = 0.6 cm
d:Ge/Insert3/HL = 10. cm #3 mm long
d:Ge/Insert3/SPhi = 0. deg
d:Ge/Insert3/DPhi = 360. deg
d:Ge/Insert3/TransX = 0. cm
d:Ge/Insert3/TransY = 0.0 cm
d:Ge/Insert3/TransZ = -5.75 cm
d:Ge/Insert3/RotX = 0. deg
d:Ge/Insert3/RotY = 90. deg
d:Ge/Insert3/RotZ = 0. deg

s:Ge/Insert4/Type     = "TsCylinder"
s:Ge/Insert4/Parent = "InsertGroup"
b:Ge/Insert4/IsParallel = "True"
s:Ge/Insert4/ParallelWorldName = "Inserts"
s:Ge/Insert4/Material = "G4_WATER"
d:Ge/Insert4/RMin = 0.0 cm
d:Ge/Insert4/RMax = 0.6 cm
d:Ge/Insert4/HL = 10. cm #3 mm long
d:Ge/Insert4/SPhi = 0. deg
d:Ge/Insert4/DPhi = 360. deg
d:Ge/Insert4/TransX = 0. cm
d:Ge/Insert4/TransY = -2.875 cm
d:Ge/Insert4/TransZ = -4.979646 cm
d:Ge/Insert4/RotX = 0. deg
d:Ge/Insert4/RotY = 90. deg
d:Ge/Insert4/RotZ = 0. deg

s:Ge/Insert5/Type     = "TsCylinder"
s:Ge/Insert5/Parent = "InsertGroup"
b:Ge/Insert5/IsParallel = "True"
s:Ge/Insert5/ParallelWorldName = "Inserts"
s:Ge/Insert5/Material = "CATPHAN_Teflon"
d:Ge/Insert5/RMin = 0.0 cm
d:Ge/Insert5/RMax = 0.6 cm
d:Ge/Insert5/HL = 10. cm #3 mm long
d:Ge/Insert5/SPhi = 0. deg
d:Ge/Insert5/DPhi = 360. deg
d:Ge/Insert5/TransX = 0. cm
d:Ge/Insert5/TransY = -4.979646 cm
d:Ge/Insert5/TransZ = -2.875 cm
d:Ge/Insert5/RotX = 0. deg
d:Ge/Insert5/RotY = 90. deg
d:Ge/Insert5/RotZ = 0. deg

s:Ge/Insert6/Type     = "TsCylinder"
s:Ge/Insert6/Parent = "InsertGroup"
b:Ge/Insert6/IsParallel = "True"
s:Ge/Insert6/ParallelWorldName = "Inserts"
s:Ge/Insert6/Material = "G4_AIR"
d:Ge/Insert6/RMin = 0.0 cm
d:Ge/Insert6/RMax = 0.6 cm
d:Ge/Insert6/HL = 10. cm #3 mm long
d:Ge/Insert6/SPhi = 0. deg
d:Ge/Insert6/DPhi = 360. deg
d:Ge/Insert6/TransX = 0. cm
d:Ge/Insert6/TransY = -5.75 cm
d:Ge/Insert6/TransZ = -0.0 cm
d:Ge/Insert6/RotX = 0. deg
d:Ge/Insert6/RotY = 90. deg
d:Ge/Insert6/RotZ = 0. deg

s:Ge/Insert7/Type     = "TsCylinder"
s:Ge/Insert7/Parent = "InsertGroup"
b:Ge/Insert7/IsParallel = "True"
s:Ge/Insert7/ParallelWorldName = "Inserts"
s:Ge/Insert7/Material = "CATPHAN_PMP"
d:Ge/Insert7/RMin = 0.0 cm
d:Ge/Insert7/RMax = 0.6 cm
d:Ge/Insert7/HL = 10. cm #3 mm long
d:Ge/Insert7/SPhi = 0. deg
d:Ge/Insert7/DPhi = 360. deg
d:Ge/Insert7/TransX = 0. cm
d:Ge/Insert7/TransY = -4.979646 cm
d:Ge/Insert7/TransZ = 2.875 cm
d:Ge/Insert7/RotX = 0. deg
d:Ge/Insert7/RotY = 90. deg
d:Ge/Insert7/RotZ = 0. deg

s:Ge/Insert8/Type     = "TsCylinder"
s:Ge/Insert8/Parent = "InsertGroup"
b:Ge/Insert8/IsParallel = "True"
s:Ge/Insert8/ParallelWorldName = "Inserts"
s:Ge/Insert8/Material = "CATPHAN_B50"
d:Ge/Insert8/RMin = 0.0 cm
d:Ge/Insert8/RMax = 0.6 cm
d:Ge/Insert8/HL = 10. cm #3 mm long
d:Ge/Insert8/SPhi = 0. deg
d:Ge/Insert8/DPhi = 360. deg
d:Ge/Insert8/TransX = 0. cm
d:Ge/Insert8/TransY = -2.875 cm
d:Ge/Insert8/TransZ = 4.979646 cm
d:Ge/Insert8/RotX = 0. deg
d:Ge/Insert8/RotY = 90. deg
d:Ge/Insert8/RotZ = 0. deg

s:Ge/Insert9/Type     = "TsCylinder"
s:Ge/Insert9/Parent = "InsertGroup"
b:Ge/Insert9/IsParallel = "True"
s:Ge/Insert9/ParallelWorldName = "Inserts"
s:Ge/Insert9/Material = "CATPHAN_LDPE"
d:Ge/Insert9/RMin = 0.0 cm
d:Ge/Insert9/RMax = 0.6 cm
d:Ge/Insert9/HL = 10. cm #3 mm long
d:Ge/Insert9/SPhi = 0. deg
d:Ge/Insert9/DPhi = 360. deg
d:Ge/Insert9/TransX = 0. cm
d:Ge/Insert9/TransY = -0.0 cm
d:Ge/Insert9/TransZ = 5.75 cm
d:Ge/Insert9/RotX = 0. deg
d:Ge/Insert9/RotY = 90. deg
d:Ge/Insert9/RotZ = 0. deg

s:Ge/Insert10/Type     = "TsCylinder"
s:Ge/Insert10/Parent = "InsertGroup"
b:Ge/Insert10/IsParallel = "True"
s:Ge/Insert10/ParallelWorldName = "Inserts"
s:Ge/Insert10/Material = "G4_WATER"
d:Ge/Insert10/RMin = 0.0 cm
d:Ge/Insert10/RMax = 0.6 cm
d:Ge/Insert10/HL = 10. cm #3 mm long
d:Ge/Insert10/SPhi = 0. deg
d:Ge/Insert10/DPhi = 360. deg
d:Ge/Insert10/TransX = 0. cm
d:Ge/Insert10/TransY = 2.875 cm
d:Ge/Insert10/TransZ = 4.979646 cm
d:Ge/Insert10/RotX = 0. deg
d:Ge/Insert10/RotY = 90. deg
d:Ge/Insert10/RotZ = 0. deg

s:Ge/Insert11/Type     = "TsCylinder"
s:Ge/Insert11/Parent = "InsertGroup"
b:Ge/Insert11/IsParallel = "True"
s:Ge/Insert11/ParallelWorldName = "Inserts"
s:Ge/Insert11/Material = "CATPHAN_Polystyrene"
d:Ge/Insert11/RMin = 0.0 cm
d:Ge/Insert11/RMax = 0.6 cm
d:Ge/Insert11/HL = 10. cm #3 mm long
d:Ge/Insert11/SPhi = 0. deg
d:Ge/Insert11/DPhi = 360. deg
d:Ge/Insert11/TransX = 0. cm
d:Ge/Insert11/TransY = 4.979646 cm
d:Ge/Insert11/TransZ = 2.875 cm
d:Ge/Insert11/RotX = 0. deg
d:Ge/Insert11/RotY = 90. deg
d:Ge/Insert11/RotZ = 0. deg

s:Ge/Insert12/Type     = "TsCylinder"
s:Ge/Insert12/Parent = "InsertGroup"
b:Ge/Insert12/IsParallel = "True"
s:Ge/Insert12/ParallelWorldName = "Inserts"
s:Ge/Insert12/Material = "G4_AIR"
d:Ge/Insert12/RMin = 0.0 cm
d:Ge/Insert12/RMax = 0.6 cm
d:Ge/Insert12/HL = 10. cm #3 mm long
d:Ge/Insert12/SPhi = 0. deg
d:Ge/Insert12/DPhi = 360. deg
d:Ge/Insert12/TransX = 0. cm
d:Ge/Insert12/TransY = 5.75 cm
d:Ge/Insert12/TransZ = 0.0 cm
d:Ge/Insert12/RotX = 0. deg
d:Ge/Insert12/RotY = 90. deg
d:Ge/Insert12/RotZ = 0. deg

s:Ge/Insert13/Type     = "TsCylinder"
s:Ge/Insert13/Parent = "InsertGroup"
b:Ge/Insert13/IsParallel = "True"
s:Ge/Insert13/ParallelWorldName = "Inserts"
s:Ge/Insert13/Material = "CATPHAN_Acrylic"
d:Ge/Insert13/RMin = 0.0 cm
d:Ge/Insert13/RMax = 0.6 cm
d:Ge/Insert13/HL = 10. cm #3 mm long
d:Ge/Insert13/SPhi = 0. deg
d:Ge/Insert13/DPhi = 360. deg
d:Ge/Insert13/TransX = 0. cm
d:Ge/Insert13/TransY = 4.979646 cm
d:Ge/Insert13/TransZ = -2.875 cm
d:Ge/Insert13/RotX = 0. deg
d:Ge/Insert13/RotY = 90. deg
d:Ge/Insert13/RotZ = 0. deg
