# Demonstrates scoring in an XCAT file.

b:Ts/UseQt                              = "True"
# b:Gr/Enable                          = "False"                # CHANGE
i:Ts/NumberOfThreads                   = 0

s:Gr/ViewA/Type           = "OpenGL"
i:Gr/ViewA/WindowSizeX    = 900
i:Gr/ViewA/WindowSizeY    = 900
d:Gr/ViewA/Theta          = 90 deg
d:Gr/ViewA/Phi            = 0 deg
u:Gr/ViewA/Zoom             = 0.5

iv:Gr/Color/TransparentBlack = 4 0 0 0 0

s:Ge/World/Material                    = "Vacuum"
d:Ge/World/HLX                         = 0.5 m
d:Ge/World/HLY                         = 0.5 m
d:Ge/World/HLZ                         = 1. m
i:Ts/ShowHistoryCountAtInterval = 100000


# Extra graphics options to handle complex voxel geometries
i:Gr/ShowOnlyOutlineIfVoxelCountExceeds = 20000000

u:So/Example/BeamEnergySpread          = 0.001

# d:Tf/TimelineEnd                       = 19. ms
# i:Tf/NumberOfSequentialTimes           = 18
# s:Tf/beam_energy/Function              = "Step"
# dv:Tf/beam_energy/Times                = 18 1 2 3 4 5 6 7 8 9 10 11 12 13 14 15 16 17 18 ms
# dv:Tf/beam_energy/Values               = 18 10 20 30 40 50 60 70 80 90 100 300 500 700 900 1000 2000 4000 6000 keV

# d:So/Example/BeamEnergy                = Tf/beam_energy/Value keV

s:So/Example/BeamEnergySpectrumType       = "Continuous"
dv:So/Example/BeamEnergySpectrumValues = 200 0.0072475 0.019743 0.032238 0.044733 0.057228 0.069722 0.082217 0.094713 0.10721 0.1197 0.1322 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2.4938 MeV
uv:So/Example/BeamEnergySpectrumWeights = 200 0.00932821724595288 0.10533088988592468 0.09764931536493746 0.07402996773547467 0.056952140479060824 0.04786388624327883 0.03980305983840086 0.03506447993640587 0.029754034163428946 0.026778860596712653 0.024221553651155987 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7.099135567181664e-06
s:So/Example/Type                      = "Beam"
s:So/Example/Component                 = "BeamPosition"
s:So/Example/BeamParticle              = "gamma"
s:So/Example/BeamPositionDistribution  = "Flat"
s:So/Example/BeamPositionCutoffShape   = "Rectangle"
d:So/Example/BeamPositionCutoffX      = 0.07 cm
d:So/Example/BeamPositionCutoffY      = 0.07 cm
d:So/Example/BeamPositionSpreadX      = 0.1 cm
d:So/Example/BeamPositionSpreadY      = 0.1 cm
s:So/Example/BeamAngularDistribution  = "Flat"
d:So/Example/BeamAngularCutoffX       = 0.001 rad
d:So/Example/BeamAngularCutoffY       = 0.1325 rad # Cheating a bit
i:So/Example/NumberOfHistoriesInRun    = 200000000 #200000000

d:Ge/BeamPosition/RotX                 = 180. deg
d:Ge/BeamPosition/RotY                 = 0. deg
d:Ge/BeamPosition/RotZ                 = 0. deg
d:Ge/BeamPosition/TransX               = 0 m
d:Ge/BeamPosition/TransY               = 0 m

s:Ge/MyBox/Type                        = "TsBox"
s:Ge/MyBox/Material                    = "Air"
s:Ge/MyBox/Parent                      = "World"
dc:Ge/MyBox/HLX                        = 7.5 mm
dc:Ge/MyBox/HLY                        = .2007 m # 0.336 pixel pitch * 1024 # Should be 0.392
dc:Ge/MyBox/HLZ                        = .0500 m # 0.336 pixel pitch * 32
dc:Ge/MyBox/TransX                     = 0. m
dc:Ge/MyBox/TransY                     = 0. m
dc:Ge/MyBox/TransZ                     = -0.52 m
dc:Ge/MyBox/RotX                       = 0. deg
dc:Ge/MyBox/RotY                       = 90. deg
dc:Ge/MyBox/RotZ                       = 0. deg


s:Sc/Readout_filt/Quantity = "PhaseSpace"
s:Sc/Readout_filt/Surface  = "MyBox/XPlusSurface"# s:Sc/Readout/OutputFile = "PhotodiodeSurface"
s:Sc/Readout_filt/OutputType = "Binary"
i:Sc/Readout_filt/BounceLimit = 400000000 
s:Sc/Readout_filt/IfOutputFileAlreadyExists = "Overwrite"
# s:Sc/Readout_filt/SplitByTimeFeature        = "beam_energy"
sv:Sc/Readout_filt/OnlyIncludeIfParticleOrAncestorInteractedInComponent = 1 "Patient"

s:Sc/Readout_prim/Quantity = "PhaseSpace"
s:Sc/Readout_prim/Surface  = "MyBox/XPlusSurface"# s:Sc/Readout/OutputFile = "PhotodiodeSurface"
s:Sc/Readout_prim/OutputType = "Binary"
i:Sc/Readout_prim/BounceLimit = 400000000 
s:Sc/Readout_prim/IfOutputFileAlreadyExists = "Overwrite"
# s:Sc/Readout_prim/SplitByTimeFeature        = "beam_energy"
sv:Sc/Readout_prim/OnlyIncludeIfParticleOrAncestorNotInteractedInComponent = 1 "Patient"

# s:Ge/ScoringCylinder/Type              = "TsCylinder"
# s:Ge/ScoringCylinder/Parent            = "World"
# s:Ge/ScoringCylinder/Material          = "G4_WATER"
# dc:Ge/ScoringCylinder/RMin             = 0. cm
# dc:Ge/ScoringCylinder/RMax             = 8. cm
# dc:Ge/ScoringCylinder/HL               = 10. cm
# dc:Ge/ScoringCylinder/SPhi             = 0. deg
# dc:Ge/ScoringCylinder/DPhi             = 360. deg
# dc:Ge/ScoringCylinder/RotX             = 0. deg
# dc:Ge/ScoringCylinder/RotY             = 90. deg
# dc:Ge/ScoringCylinder/RotZ             = 0. deg

s:Ge/Patient/Type		= "TsImageCube"
s:Ge/Patient/InputDirectory	= "./"
s:Ge/Patient/InputFile		= "even_smaller_output_atn_1.bin"
s:Ge/Patient/MetaDataFile	= "even_smaller_output_log"
s:Ge/Patient/ImagingToMaterialConverter = "XCAT_Attenuation" # "XCAT_Activity"
includeFile = custom_materials_topas.txt
# includeFile = XCAT_Materials.txt
dv:Ge/Patient/VoxelSizeZ = 1 3.125 mm
s:Ge/Patient/DataType = "FLOAT"
s:Ge/Patient/Parent   = "World"
d:Ge/Patient/TransX   = 0. m
d:Ge/Patient/TransY   = 0. m
d:Ge/Patient/TransZ   = 0. m
d:Ge/Patient/RotX     = 0. deg
d:Ge/Patient/RotY     = 90. deg
d:Ge/Patient/RotZ     = 0. deg
iv:Ge/Patient/ShowSpecificSlicesZ = 3 1 12 25