b:Ts/UseQt                             = "True"
# b:Gr/Enable                          = "False"                # CHANGE

# b:Ts/PauseBeforeQuit                 = "True"
i:Ts/NumberOfThreads                   = -1

s:Ge/World/Material                    = "Vacuum"
d:Ge/World/HLX                         = 1. m
d:Ge/World/HLY                         = 1. m
d:Ge/World/HLZ                         = 1. m

s:Gr/ViewA/Type                        = "OpenGL"
d:Gr/ViewA/Theta                       = 45. deg
d:Gr/ViewA/Phi                         = 45. deg
s:Gr/ViewA/CenterOn                    = "MyBox"

u:So/Example/BeamEnergySpread          = 0.001

d:Tf/TimelineEnd                       = 19. ms
i:Tf/NumberOfSequentialTimes           = 18
s:Tf/beam_energy/Function              = "Step"
dv:Tf/beam_energy/Times                = 18 1 2 3 4 5 6 7 8 9 10 11 12 13 14 15 16 17 18 ms
dv:Tf/beam_energy/Values               = 18 10 20 30 40 50 60 70 80 90 100 300 500 700 900 1000 2000 4000 6000 keV

d:So/Example/BeamEnergy                = Tf/beam_energy/Value keV
s:So/Example/Type                      = "Beam"
s:So/Example/Component                 = "BeamPosition"
s:So/Example/BeamParticle              = "gamma"
s:So/Example/BeamPositionDistribution  = "Flat"
s:So/Example/BeamPositionCutoffShape   = "Rectangle"
dc:So/Example/BeamPositionCutoffX      = 0.07 cm
dc:So/Example/BeamPositionCutoffY      = 0.07 cm
dc:So/Example/BeamPositionSpreadX      = 0.1 cm
dc:So/Example/BeamPositionSpreadY      = 0.1 cm
sc:So/Example/BeamAngularDistribution  = "Flat"
dc:So/Example/BeamAngularCutoffX       = 0.160793105 rad
dc:So/Example/BeamAngularCutoffY       = 0.160793105 rad # Cheating a bit
i:So/Example/NumberOfHistoriesInRun    = 10000000 #200000000

d:Ge/BeamPosition/RotX                 = 180. deg
d:Ge/BeamPosition/RotY                 = 0. deg
d:Ge/BeamPosition/RotZ                 = 0. deg
d:Ge/BeamPosition/TransX               = 0 m
d:Ge/BeamPosition/TransY               = 0 m

i:Ts/ShowHistoryCountAtInterval        = 100000


s:Ge/MyBox/Type                        = "TsBox"
s:Ge/MyBox/Material                    = "Air"
s:Ge/MyBox/Parent                      = "World"
dc:Ge/MyBox/HLX                        = 7.5 mm
dc:Ge/MyBox/HLY                        = .2007 m # 0.336 pixel pitch * 1024 # Should be 0.392
dc:Ge/MyBox/HLZ                        = .0500 m # 0.336 pixel pitch * 32
dc:Ge/MyBox/TransX                     = 0. m
dc:Ge/MyBox/TransY                     = 0. m
dc:Ge/MyBox/TransZ                     = -0.52 m
dc:Ge/MyBox/RotX                       = 0. deg
dc:Ge/MyBox/RotY                       = 90. deg
dc:Ge/MyBox/RotZ                       = 0. deg

# s:Sc/Readout/Quantity                  = "SurfaceTrackCount"
# s:Sc/Readout/Surface                   = "MyBox/XPlusSurface"
# i:Sc/Readout/YBins                     = 1024
# i:Sc/Readout/ZBins                     = 32
# i:Sc/Readout/EBins                     = 50 # defaults to 1, that is, un-binned
# d:Sc/Readout/EBinMin                   = .001 MeV # defaults to zero
# d:Sc/Readout/EBinMax                   = 1. MeV # must be specified if EBins is greater than 1
# s:Sc/Readout/OutputType                = "csv"
# s:Sc/Readout/IfOutputFileAlreadyExists = "overwrite"
# s:Sc/Readout/SplitByTimeFeature        = "beam_energy"
# s:Sc/Readout/OutputFile              = "Spectral_Scorer"

# s:Sc/Readout_light_primary/OnlyIncludeParticlesOfGeneration = "Primary"
# s:Sc/Readout_light_primary/Quantity                  = "SurfaceTrackCount"
# s:Sc/Readout_light_primary/Surface                   = "MyBox/XPlusSurface"
# i:Sc/Readout_light_primary/YBins                     = 1024
# i:Sc/Readout_light_primary/ZBins                     = 32
# i:Sc/Readout_light_primary/EBins                     = 50 # defaults to 1, that is, un-binned
# d:Sc/Readout_light_primary/EBinMin                   = .001 MeV # defaults to zero
# d:Sc/Readout_light_primary/EBinMax                   = 1. MeV # must be specified if EBins is greater than 1
# s:Sc/Readout_light_primary/OutputType                = "csv"
# s:Sc/Readout_light_primary/SplitByTimeFeature        = "beam_energy"
# s:Sc/Readout_light_primary/IfOutputFileAlreadyExists = "overwrite"

s:Sc/Readout_filt/Quantity = "PhaseSpace"
s:Sc/Readout_filt/Surface  = "MyBox/XPlusSurface"# s:Sc/Readout/OutputFile = "PhotodiodeSurface"
# b:Sc/Readout/IncludeParentID = "True" # Track ID of parent particle
s:Sc/Readout_filt/OutputType = "Binary"
i:Sc/Readout_filt/BounceLimit = 400000000 
s:Sc/Readout_filt/IfOutputFileAlreadyExists = "Overwrite"
s:Sc/Readout_filt/SplitByTimeFeature        = "beam_energy"
sv:Sc/Readout_filt/OnlyIncludeIfParticleOrAncestorInteractedInComponent = 1 "ScoringCylinder"

s:Sc/Readout_prim/Quantity = "PhaseSpace"
s:Sc/Readout_prim/Surface  = "MyBox/XPlusSurface"# s:Sc/Readout/OutputFile = "PhotodiodeSurface"
# b:Sc/Readout/IncludeParentID = "True" # Track ID of parent particle
s:Sc/Readout_prim/OutputType = "Binary"
i:Sc/Readout_prim/BounceLimit = 400000000 
s:Sc/Readout_prim/IfOutputFileAlreadyExists = "Overwrite"
s:Sc/Readout_prim/SplitByTimeFeature        = "beam_energy"
sv:Sc/Readout_prim/OnlyIncludeIfParticleOrAncestorNotInteractedInComponent = 1 "ScoringCylinder"


# s:Sc/Readout_flood/Quantity = "PhaseSpace"
# s:Sc/Readout_flood/Surface  = "MyBox/XPlusSurface"# s:Sc/Readout/OutputFile = "PhotodiodeSurface"
# # b:Sc/Readout/IncludeParentID = "True" # Track ID of parent particle
# s:Sc/Readout_flood/OutputType = "Binary"
# i:Sc/Readout_flood/BounceLimit = 400000000 
# s:Sc/Readout_flood/IfOutputFileAlreadyExists = "Overwrite"
# s:Sc/Readout_flood/SplitByTimeFeature        = "beam_energy"

# s:Sc/Readout_light_secondary/OnlyIncludeParticlesOfGeneration = "Secondary"
# s:Sc/Readout_light_secondary/Quantity                  = "SurfaceTrackCount"
# s:Sc/Readout_light_secondary/Surface                   = "MyBox/XPlusSurface"
# i:Sc/Readout_light_secondary/YBins                     = 1024
# i:Sc/Readout_light_secondary/ZBins                     = 32
# i:Sc/Readout_light_secondary/EBins                     = 50 # defaults to 1, that is, un-binned
# d:Sc/Readout_light_secondary/EBinMin                   = .001 MeV # defaults to zero
# d:Sc/Readout_light_secondary/EBinMax                   = 1. MeV # must be specified if EBins is greater than 1
# s:Sc/Readout_light_secondary/OutputType                = "csv"
# s:Sc/Readout_light_secondary/SplitByTimeFeature        = "beam_energy"
# s:Sc/Readout_light_secondary/IfOutputFileAlreadyExists = "overwrite"

s:Ge/ScoringCylinder/Type              = "TsCylinder"
s:Ge/ScoringCylinder/Parent            = "World"
s:Ge/ScoringCylinder/Material          = "G4_WATER"
dc:Ge/ScoringCylinder/RMin             = 0. cm
dc:Ge/ScoringCylinder/RMax             = 8. cm
dc:Ge/ScoringCylinder/HL               = 10. cm
dc:Ge/ScoringCylinder/SPhi             = 0. deg
dc:Ge/ScoringCylinder/DPhi             = 360. deg
dc:Ge/ScoringCylinder/RotX             = 0. deg
dc:Ge/ScoringCylinder/RotY             = 90. deg
dc:Ge/ScoringCylinder/RotZ             = 0. deg