b:Ts/UseQt                             = "True"
# b:Gr/Enable                          = "False"                # CHANGE


includeFile                             = inserts.txt

sv:Ph/Default/LayeredMassGeometryWorlds = 1 "Inserts"

# b:Ts/PauseBeforeQuit                 = "True"
i:Ts/NumberOfThreads                   = -1

s:Ge/World/Material                    = "Air"
d:Ge/World/HLX                         = 1. m
d:Ge/World/HLY                         = 1. m
d:Ge/World/HLZ                         = 1. m

s:Gr/ViewA/Type                        = "OpenGL"
d:Gr/ViewA/Theta                       = 45. deg
d:Gr/ViewA/Phi                         = 45. deg
s:Gr/ViewA/CenterOn                    = "MyBox"

u:So/Example/BeamEnergySpread          = 0.001

dv:So/Example/BeamEnergySpectrumValues = 200 0.015 0.045 0.075 0.105 0.135 0.165 0.195 0.225 0.255 0.285 0.315 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5.985 MeV
uv:So/Example/BeamEnergySpectrumWeights = 200 0.00932948226572424 0.08168943504840458 0.0794005993790592 0.06285985738122206 0.05131660250882283 0.04306470340452115 0.03710835702215279 0.032547478314931905 0.028977364864434266 0.026110862672524826 0.02367761037253843 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5.57028378487569e-06
s:So/Example/BeamEnergySpectrumType       = "Continuous"
s:So/Example/Type                      = "Beam"
s:So/Example/Component                 = "BeamPosition"
s:So/Example/BeamParticle              = "gamma"
s:So/Example/BeamPositionDistribution  = "Flat"
s:So/Example/BeamPositionCutoffShape   = "Rectangle"
dc:So/Example/BeamPositionCutoffX      = 0.07 cm
dc:So/Example/BeamPositionCutoffY      = 0.07 cm
dc:So/Example/BeamPositionSpreadX      = 0.1 cm
dc:So/Example/BeamPositionSpreadY      = 0.1 cm
sc:So/Example/BeamAngularDistribution  = "Flat"
dc:So/Example/BeamAngularCutoffX       = 0.0001 rad
dc:So/Example/BeamAngularCutoffY       = 0.13 rad # Cheating a bit
i:So/Example/NumberOfHistoriesInRun    = 50000000

d:Ge/BeamPosition/RotX                 = 180. deg
d:Ge/BeamPosition/RotY                 = 0. deg
d:Ge/BeamPosition/RotZ                 = 0. deg
d:Ge/BeamPosition/TransX               = 0 m
d:Ge/BeamPosition/TransY               = 0 m

i:Ts/ShowHistoryCountAtInterval        = 100000


s:Ge/MyBox/Type                        = "TsBox"
s:Ge/MyBox/Material                    = "Air"
s:Ge/MyBox/Parent                      = "World"
dc:Ge/MyBox/HLX                        = .001 m
dc:Ge/MyBox/HLY                        = .172032 m # 0.336 pixel pitch * 1024 # Should be 0.392
dc:Ge/MyBox/HLZ                        = .005376 m # 0.336 pixel pitch * 32
dc:Ge/MyBox/TransX                     = 0. m
dc:Ge/MyBox/TransY                     = 0. m
dc:Ge/MyBox/TransZ                     = -0.5 m
dc:Ge/MyBox/RotX                       = 0. deg
dc:Ge/MyBox/RotY                       = 90. deg
dc:Ge/MyBox/RotZ                       = 0. deg

# s:Sc/Readout_Adipose/Quantity                  = "SurfaceTrackCount"
# s:Sc/Readout_Adipose/Surface                   = "MyBox/XPlusSurface"
# i:Sc/Readout_Adipose/YBins                     = 1024
# i:Sc/Readout_Adipose/ZBins                     = 128 # Just changed this
# i:Sc/Readout_Adipose/EBins                     = 50 # defaults to 1, that is, un-binned
# d:Sc/Readout_Adipose/EBinMin                   = .001 MeV # defaults to zero
# d:Sc/Readout_Adipose/EBinMax                   = 1. MeV # must be specified if EBins is greater than 1
# s:Sc/Readout_Adipose/OutputType                = "csv"
# s:Sc/Readout_Adipose/IfOutputFileAlreadyExists = "overwrite"
# # s:Sc/Readout_Adipose/SplitByTimeFeature        = "beam_energy"
# s:Sc/Readout_Adipose/OutputFile              = "Bone_Scorer"

# s:Sc/Readout_light_primary/OnlyIncludeParticlesOfGeneration = "Primary"
# s:Sc/Readout_light_primary/Quantity                  = "SurfaceTrackCount"
# s:Sc/Readout_light_primary/Surface                   = "MyBox/XPlusSurface"
# i:Sc/Readout_light_primary/YBins                     = 1024
# i:Sc/Readout_light_primary/ZBins                     = 32
# i:Sc/Readout_light_primary/EBins                     = 50 # defaults to 1, that is, un-binned
# d:Sc/Readout_light_primary/EBinMin                   = .001 MeV # defaults to zero
# d:Sc/Readout_light_primary/EBinMax                   = 1. MeV # must be specified if EBins is greater than 1
# s:Sc/Readout_light_primary/OutputType                = "csv"
# s:Sc/Readout_light_primary/SplitByTimeFeature        = "beam_energy"
# s:Sc/Readout_light_primary/IfOutputFileAlreadyExists = "overwrite"

# s:Sc/Readout_light_secondary/OnlyIncludeParticlesOfGeneration = "Secondary"
# s:Sc/Readout_light_secondary/Quantity                  = "SurfaceTrackCount"
# s:Sc/Readout_light_secondary/Surface                   = "MyBox/XPlusSurface"
# i:Sc/Readout_light_secondary/YBins                     = 1024
# i:Sc/Readout_light_secondary/ZBins                     = 32
# i:Sc/Readout_light_secondary/EBins                     = 50 # defaults to 1, that is, un-binned
# d:Sc/Readout_light_secondary/EBinMin                   = .001 MeV # defaults to zero
# d:Sc/Readout_light_secondary/EBinMax                   = 1. MeV # must be specified if EBins is greater than 1
# s:Sc/Readout_light_secondary/OutputType                = "csv"
# s:Sc/Readout_light_secondary/SplitByTimeFeature        = "beam_energy"
# s:Sc/Readout_light_secondary/IfOutputFileAlreadyExists = "overwrite"

s:Ge/ScoringCylinder/Type              = "TsCylinder"
s:Ge/ScoringCylinder/Parent            = "World"
s:Ge/ScoringCylinder/Material          = "G4_WATER"
dc:Ge/ScoringCylinder/RMin             = 0. cm
dc:Ge/ScoringCylinder/RMax             = 8. cm
dc:Ge/ScoringCylinder/HL               = 10. cm
dc:Ge/ScoringCylinder/SPhi             = 0. deg
dc:Ge/ScoringCylinder/DPhi             = 360. deg
dc:Ge/ScoringCylinder/RotX             = 0. deg
dc:Ge/ScoringCylinder/RotY             = 90. deg
dc:Ge/ScoringCylinder/RotZ             = 0. deg

# Don't know if this will include the dose to parrallel worlds
s:Sc/DoseAtPhantom/Quantity                  = "DoseToMedium"
s:Sc/DoseAtPhantom/Component                 = "ScoringCylinder"
# b:Sc/DoseAtPhantom/OutputToConsole           = "TRUE"
s:Sc/DoseAtPhantom/IfOutputFileAlreadyExists = "Overwrite"