b:Ts/UseQt                             = "True"
# b:Gr/Enable                          = "False"                # CHANGE

includeFile = inserts.txt
includeFile = Ma_CuGOS.txt
includeFile = Ge_CuGOS.txt


# b:Ts/PauseBeforeQuit                 = "True"
i:Ts/NumberOfThreads                   = -1

s:Ge/InsertGroup/Type="Group"
s:Ge/InsertGroup/Parent = "World"
d:Ge/InsertGroup/TransX=0. m
d:Ge/InsertGroup/TransY=0. m
d:Ge/InsertGroup/TransZ=0. m
d:Ge/InsertGroup/RotX=1 deg
d:Ge/InsertGroup/RotY=0. deg

sv:Ph/Default/LayeredMassGeometryWorlds = 1 "Inserts"

s:Ge/World/Material                    = "Air"
d:Ge/World/HLX                         = 1. m
d:Ge/World/HLY                         = 1. m
d:Ge/World/HLZ                         = 1. m

s:Gr/ViewA/Type                        = "OpenGL"
d:Gr/ViewA/Theta                       = 45. deg
d:Gr/ViewA/Phi                         = 45. deg
s:Gr/ViewA/CenterOn                    = "GOS_Glue"

u:So/Example/BeamEnergySpread          = 0.001

s:So/Example/BeamEnergySpectrumType       = "Continuous"
s:So/Example/Type                      = "Beam"
s:So/Example/Component                 = "BeamPosition"
s:So/Example/BeamParticle              = "gamma"
s:So/Example/BeamPositionDistribution  = "Flat"
s:So/Example/BeamPositionCutoffShape   = "Rectangle"
dc:So/Example/BeamPositionCutoffX      = 0.07 cm
dc:So/Example/BeamPositionCutoffY      = 0.07 cm
dc:So/Example/BeamPositionSpreadX      = 0.1 cm
dc:So/Example/BeamPositionSpreadY      = 0.1 cm
sc:So/Example/BeamAngularDistribution  = "Flat"
dc:So/Example/BeamAngularCutoffY       = 0.160793105 rad
dc:So/Example/BeamAngularCutoffX       = 0.04 rad # Cheating a bit
i:So/Example/NumberOfHistoriesInRun    = 1000000000

d:Ge/BeamPosition/RotX                 = 180. deg
d:Ge/BeamPosition/RotY                 = 0. deg
d:Ge/BeamPosition/RotZ                 = 0. deg
d:Ge/BeamPosition/TransX               = 0 m
d:Ge/BeamPosition/TransY               = 0 m

i:Ts/ShowHistoryCountAtInterval        = 100000

s:Ge/ScoringCylinder/Type              = "TsCylinder"
s:Ge/ScoringCylinder/Parent            = "World"
s:Ge/ScoringCylinder/Material          = "G4_WATER"
dc:Ge/ScoringCylinder/RMin             = 0. cm
dc:Ge/ScoringCylinder/RMax             = 8. cm
dc:Ge/ScoringCylinder/HL               = 10. cm
dc:Ge/ScoringCylinder/SPhi             = 0. deg
dc:Ge/ScoringCylinder/DPhi             = 360. deg
dc:Ge/ScoringCylinder/RotX             = 0. deg
dc:Ge/ScoringCylinder/RotY             = 90. deg
dc:Ge/ScoringCylinder/RotZ             = 0. deg

s:Sc/Readout_Adipose/Quantity                  = "EnergyDeposit"
s:Sc/Readout_Adipose/Component                   = "GOS_Glue"
i:Sc/Readout_Adipose/YBins                     = 512
i:Sc/Readout_Adipose/ZBins                     = 128 # Just changed this
i:Sc/Readout_Adipose/XBins                     = 1 # Just changed this
s:Sc/Readout_Adipose/OutputType                = "csv"
s:Sc/Readout_Adipose/IfOutputFileAlreadyExists = "overwrite"


# Don't know if this will include the dose to parrallel worlds
s:Sc/Dose_Al_6/Quantity                  = "DoseToMedium"
s:Sc/Dose_Al_6/Component                 = "ScoringCylinder"
s:Sc/Dose_Al_6/IfOutputFileAlreadyExists = "Overwrite"
# C_spectrum_25.txt
 
dv:So/Example/BeamEnergySpectrumValues = 200 0.0072475 0.019743 0.032238 0.044733 0.057228 0.069722 0.082217 0.094713 0.10721 0.1197 0.1322 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2.4938 MeV
uv:So/Example/BeamEnergySpectrumWeights = 200 0.00932821724595288 0.10533088988592468 0.09764931536493746 0.07402996773547467 0.056952140479060824 0.04786388624327883 0.03980305983840086 0.03506447993640587 0.029754034163428946 0.026778860596712653 0.024221553651155987 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7.099135567181664e-06
# s:Sc/Dose_Al_6/OutputFile = "runs/CT_dose_al_6"
